CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:69
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (file does endwith ".czi")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does C "0")
    Name to assign these images:GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does C "1")
    Name to assign these images:AF647
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does C "2")
    Name to assign these images:KuO
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does C "3")
    Name to assign these images:Autofluorescence
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
GaussianFilter:[module_num:5|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
    Select the input image:KuO
    Name the output image:GaussianFilterKuO
    Sigma:2

GaussianFilter:[module_num:6|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
    Select the input image:Autofluorescence
    Name the output image:GaussianFilterautofluo
    Sigma:2

GaussianFilter:[module_num:7|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
    Select the input image:GFP
    Name the output image:GaussianFilterGFP
    Sigma:2

HistogramEqualization:[module_num:8|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
    Select the input image:GaussianFilterGFP
    Name the output image:HistogramEqualizationGFP
    Bins:300
    Mask:Leave blank
    Local:Yes
    Tile Size:100
    Clip limit:0.01
    Is you image 3D?:No
    Do framewise calculation?:No
    Tile Size (Z):5

Resize:[module_num:9|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enabled:False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
    Select the input image:HistogramEqualizationGFP
    Name the output image:ResizeGFP
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:0.25
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    Interpolation method:Nearest Neighbor
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    Additional image count:0

RunCellpose:[module_num:10|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
    Select the input image:HistogramEqualizationGFP
    Expected object diameter:80
    Detection mode:cyto
    Name the output object:RunCellposeMK
    Use GPU:No
    Use averaging:No
    Supply nuclei image as well?:No
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    Save probability image?:No
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    Location of the pre-trained model file:Elsewhere...|
    Pre-trained model file name:cyto_0
    Flow threshold:0.6
    Cell probability threshold:0.0
    GPU memory share for each worker:0.1
    Stitch Threshold:0.0
    Use 3D:No
    Minimum size:60
    Use Omnipose for mask reconstruction:No
    Invert images:No

ConvertObjectsToImage:[module_num:11|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notes:['uint16 better than binary ']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
    Select the input objects:RunCellposeMK
    Name the output image:CellImageMK
    Select the color format:uint16
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
MeasureObjectSizeShape:[module_num:12|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notes:['Calculating bone marrow area - can be removed?']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
    Select object sets to measure:RunCellposeMK
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:13|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
    Select the objects to filter:RunCellposeMK
    Name the output objects:FilterMK
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_MaximumRadius
    Filter using a minimum measurement value?:Yes
    Minimum value:50
    Filter using a maximum measurement value?:No
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
RunCellpose:[module_num:14|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
    Select the input image:HistogramEqualizationGFP
    Expected object diameter:80
    Detection mode:cyto
    Name the output object:RunCellposeMK
    Use GPU:No
    Use averaging:No
    Supply nuclei image as well?:No
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    Save probability image?:No
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    Location of the pre-trained model file:Elsewhere...|
    Pre-trained model file name:cyto_0
    Flow threshold:0.6
    Cell probability threshold:0.0
    GPU memory share for each worker:0.1
    Stitch Threshold:0.0
    Use 3D:No
    Minimum size:60
    Use Omnipose for mask reconstruction:No
    Invert images:No

CorrectIlluminationCalculate:[module_num:15|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enabled:False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
    Select the input image:HistogramEqualizationGFP
    Name the output image:IllumGFP
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:Yes
    Dilation radius:1
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Automatic
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:16|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enabled:False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
    Select the input image:HistogramEqualizationGFP
    Name the output image:CorrGFP
    Select the illumination function:IllumGFP
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

GaussianFilter:[module_num:17|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notes:['Tried median filter too with a window value of 10 ']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
    Select the input image:AF647
    Name the output image:GaussianFilterF647
    Sigma:4

ImageMath:[module_num:18|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMathKuoAutofluo
    Image or measurement?:Image
    Select the first image:GaussianFilterKuO
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:GaussianFilterautofluo
    Multiply the second image by:1.0
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
ImageMath:[module_num:19|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterSubstractKuoAutofluo
    Image or measurement?:Image
    Select the first image:GaussianFilterKuO
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:GaussianFilterautofluo
    Multiply the second image by:1.2
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
ImageMath:[module_num:20|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notes:['Calculating bone marrow area']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
    Operation:Add
    Raise the power of the result by:0.5
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMathBonemarrow
    Image or measurement?:Image
    Select the first image:GaussianFilterKuO
    Multiply the first image by:1.2
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    Image or measurement?:Image
    Select the second image:GaussianFilterautofluo
    Multiply the second image by:1.2
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    Image or measurement?:Image
    Select the third image:GaussianFilterGFP
    Multiply the third image by:1.2
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    Image or measurement?:Image
    Select the fourth image:GaussianFilterF647
    Multiply the fourth image by:1.2
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
IdentifyPrimaryObjects:[module_num:21|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
    Select the input image:ImageAfterMathKuoAutofluo
    Name the primary objects to be identified:autofluorescentcells
    Typical diameter of objects, in pixel units (Min,Max):30,199
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:2
    Threshold correction factor:1.1
    Lower and upper bounds on threshold:0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:1
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
MaskImage:[module_num:22|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notes:['Identify black spaces']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
    Select the input image:ImageAfterMathKuoAutofluo
    Name the output image:BMwithoutautolfuorescentcells
    Use objects or an image as a mask?:Objects
    Select object for mask:autofluorescentcells
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    Invert the mask?:Yes

IdentifyPrimaryObjects:[module_num:23|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notes:['Mask bone']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
    Select the input image:BMwithoutautolfuorescentcells
    Name the primary objects to be identified:Bone
    Typical diameter of objects, in pixel units (Min,Max):200,750
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:10
    Threshold correction factor:1.2
    Lower and upper bounds on threshold:0,1.0
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    Log transform before thresholding?:No
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
MaskImage:[module_num:24|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notes:['Mask bone']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
    Select the input image:ImageAfterMathKuoAutofluo
    Name the output image:BMwithoutbone
    Use objects or an image as a mask?:Objects
    Select object for mask:Bone
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    Invert the mask?:Yes

Threshold:[module_num:25|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notes:['Calculating bone marrow area']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
    Select the input image:ImageAfterMathBonemarrow
    Name the output image:ThresholdBM
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:3
    Threshold correction factor:0.7
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
Closing:[module_num:26|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notes:['Calculating bone marrow area']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
    Select the input image:ThresholdBM
    Name the output image:ClosingBM
    Structuring element:disk,10

ConvertImageToObjects:[module_num:27|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notes:['Calculating bone marrow area']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
    Select the input image:ClosingBM
    Name the output object:ConvertImageToObjectsBM
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

FillObjects:[module_num:28|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notes:['Calculating bone marrow area']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
    Select the input object:ConvertImageToObjectsBM
    Name the output object:FillBM
    Minimum hole size:200
    Planewise fill:No

DilateObjects:[module_num:29|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
    Select the input object:FillBM
    Name the output object:FillBMdilate
    Structuring element:disk,10

FilterObjects:[module_num:30|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notes:['BM']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enabled:False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
    Select the objects to filter:FillBM
    Name the output objects:FilterBM
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_MaximumRadius
    Filter using a minimum measurement value?:Yes
    Minimum value:50
    Filter using a maximum measurement value?:No
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
MaskImage:[module_num:31|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notes:['Calculating bone marrow area  - can be removed?']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enabled:False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
    Select the input image:GaussianFilterautofluo
    Name the output image:MaskedBM
    Use objects or an image as a mask?:Objects
    Select object for mask:FillBM
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    Invert the mask?:Yes

ImageMath:[module_num:32|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notes:['Calculating bone marrow area: Bone marrow is 0, blacks space is 1']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enabled:False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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:FilterBMAfterMath
    Image or measurement?:Image
    Select the first image:MaskedBM
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
IdentifyPrimaryObjects:[module_num:33|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notes:['Identify Bone']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enabled:False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
    Select the input image:FilterBMAfterMath
    Name the primary objects to be identified:Identifybone
    Typical diameter of objects, in pixel units (Min,Max):200,10000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1
    Threshold correction factor:1.25
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:34|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enabled:False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
    Select the input image:FilterBMAfterMath
    Name the primary objects to be identified:IdentifyPrimaryBlackspace
    Typical diameter of objects, in pixel units (Min,Max):200,10000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1
    Threshold correction factor:1.25
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
MeasureObjectSizeShape:[module_num:35|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enabled:False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
    Select object sets to measure:FillBM, IdentifyPrimaryBlackspace
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:36|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enabled:False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
    Select the objects to filter:IdentifyPrimaryBlackspace
    Name the output objects:FilterBM
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_MaximumRadius
    Filter using a minimum measurement value?:Yes
    Minimum value:50
    Filter using a maximum measurement value?:No
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
IdentifyPrimaryObjects:[module_num:37|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enabled:False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
    Select the input image:FilterBMAfterMath
    Name the primary objects to be identified:Nosignal
    Typical diameter of objects, in pixel units (Min,Max):100,1000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:38|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notes:['Identifying MK (50,500)', 'for M2_p9dp 75-100 and 10# of deviation works', 'for M2_p7 50-500 and 9# of deviation']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
    Select the input image:GaussianFilterGFP
    Name the primary objects to be identified:MK
    Typical diameter of objects, in pixel units (Min,Max):75,500
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1
    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:9
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
DilateObjects:[module_num:39|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
    Select the input object:MK
    Name the output object:DilateObjectsMK
    Structuring element:disk,1

MaskImage:[module_num:40|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notes:['Masking MK']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
    Select the input image:GaussianFilterGFP
    Name the output image:MaskedMK
    Use objects or an image as a mask?:Objects
    Select object for mask:DilateObjectsMK
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    Invert the mask?:Yes

EnhanceOrSuppressFeatures:[module_num:41|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notes:['use for immature MK? ']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enabled:False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
    Select the input image:MaskedMK
    Name the output image:EnhanceOrSuppressFeaturesMK
    Select the operation:Enhance
    Feature size:70
    Feature type:Speckles
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    Speed and accuracy:Slow
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
IdentifyPrimaryObjects:[module_num:42|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enabled:False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
    Select the input image:MaskedMK
    Name the primary objects to be identified:MKdim
    Typical diameter of objects, in pixel units (Min,Max):50,500
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1
    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:9
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
EnhanceOrSuppressFeatures:[module_num:43|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
    Select the input image:MaskedMK
    Name the output image:EnhanceOrSuppressFeaturesMaskedMK
    Select the operation:Enhance
    Feature size:30
    Feature type:Speckles
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    Speed and accuracy:Slow
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
IdentifyPrimaryObjects:[module_num:44|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notes:['Identifying platelets']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
    Select the input image:EnhanceOrSuppressFeaturesMaskedMK
    Name the primary objects to be identified:platelet
    Typical diameter of objects, in pixel units (Min,Max):7,99
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:0
    Threshold correction factor:1.3
    Lower and upper bounds on threshold:0.00,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:3
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
Threshold:[module_num:45|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
    Select the input image:ImageAfterSubstractKuoAutofluo
    Name the output image:ThresholdA
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:2
    Threshold correction factor:1.4
    Lower and upper bounds on threshold:0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
Threshold:[module_num:46|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notes:['Ostu 0.5']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
    Select the input image:GaussianFilterGFP
    Name the output image:ThresholdB
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:0.0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:5
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
Threshold:[module_num:47|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
    Select the input image:ImageAfterMathKuoAutofluo
    Name the output image:ThresholdAutofluocells
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:5
    Threshold correction factor:1.5
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
ImageMath:[module_num:48|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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMathDP
    Image or measurement?:Image
    Select the first image:ThresholdA
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:ThresholdB
    Multiply the second image by:1.0
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
IdentifyPrimaryObjects:[module_num:49|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notes:['min diam of 40 when using declumping']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
    Select the input image:ThresholdA
    Name the primary objects to be identified:KuOobjects
    Typical diameter of objects, in pixel units (Min,Max):40,100
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.3
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.1,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
MeasureObjectSizeShape:[module_num:50|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
    Select object sets to measure:KuOobjects
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:51|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notes:['On size']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
    Select the objects to filter:KuOobjects
    Name the output objects:FilterObjectsKuOcells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_MaximumRadius
    Filter using a minimum measurement value?:Yes
    Minimum value:9
    Filter using a maximum measurement value?:No
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
MeasureObjectIntensity:[module_num:52|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
    Select images to measure:ImageAfterMathDP, ThresholdA, ThresholdAutofluocells, ThresholdB
    Select objects to measure:FilterObjectsKuOcells

FilterObjects:[module_num:53|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
    Select the objects to filter:FilterObjectsKuOcells
    Name the output objects:FilterObjectsDP
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:Yes
    Name the objects removed by the filter:RemovedObjectsSP
    Select the measurement to filter by:Intensity_MeanIntensity_ImageAfterMathDP
    Filter using a minimum measurement value?:Yes
    Minimum value:0.5
    Filter using a maximum measurement value?:Yes
    Maximum value:1.0

MeasureObjectIntensity:[module_num:54|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enabled:False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
    Select images to measure:AF647, Autofluorescence, GFP, KuO
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
IdentifyPrimaryObjects:[module_num:55|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
    Select the input image:AF647
    Name the primary objects to be identified:IdentifyPrimaryObjectsAF647
    Typical diameter of objects, in pixel units (Min,Max):10000000000,100000000000
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.00,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
FillObjects:[module_num:56|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
    Select the input object:IdentifyPrimaryObjectsAF647
    Name the output object:FillAF647
    Minimum hole size:65
    Planewise fill:No

MeasureObjectSizeShape:[module_num:57|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
    Select object sets to measure:FillAF647
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:58|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
    Select the objects to filter:FillAF647
    Name the output objects:AF647vessels
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_MaxFeretDiameter
    Filter using a minimum measurement value?:Yes
    Minimum value:25
    Filter using a maximum measurement value?:No
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
MeasureObjectSizeShape:[module_num:59|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
    Select object sets to measure:AF647vessels, FillBM, MK, platelet
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureImageAreaOccupied:[module_num:60|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enabled:False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
    Measure the area occupied by:Binary Image
    Select binary images to measure:KuO
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
MeasureObjectNeighbors:[module_num:61|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
    Select objects to measure:FilterObjectsDP
    Select neighboring objects to measure:MK
    Method to determine neighbors:Within a specified distance
    Neighbor distance:20
    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:62|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
    Select objects to measure:RemovedObjectsSP
    Select neighboring objects to measure:MK
    Method to determine neighbors:Within a specified distance
    Neighbor distance:20
    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:63|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
    Select objects to measure:FilterObjectsDP
    Select neighboring objects to measure:AF647vessels
    Method to determine neighbors:Within a specified distance
    Neighbor distance:20
    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:64|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
    Select objects to measure:RemovedObjectsSP
    Select neighboring objects to measure:AF647vessels
    Method to determine neighbors:Within a specified distance
    Neighbor distance:20
    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:65|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
    Select objects to measure:FilterObjectsDP
    Select neighboring objects to measure:FilterObjectsDP
    Method to determine neighbors:Within a specified distance
    Neighbor distance:20
    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:66|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
    Select objects to measure:FilterObjectsDP
    Select neighboring objects to measure:RemovedObjectsSP
    Method to determine neighbors:Within a specified distance
    Neighbor distance:20
    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:67|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
    Select objects to measure:RemovedObjectsSP
    Select neighboring objects to measure:RemovedObjectsSP
    Method to determine neighbors:Within a specified distance
    Neighbor distance:20
    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
ExportToSpreadsheet:[module_num:68|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Downloads/CellProfiler
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|Frame_GFP,Image|Frame_AF647,Image|Frame_KuO,Image|Frame_Autofluorescence,Image|FileName_Autofluorescence,Image|FileName_AF647,Image|FileName_KuO,Image|FileName_GFP,Image|Scaling_AF647,Image|Scaling_Autofluorescence,Image|Scaling_KuO,Image|Scaling_GFP,Image|PathName_AF647,Image|PathName_Autofluorescence,Image|PathName_GFP,Image|PathName_KuO,Image|Width_GFP,Image|Width_Autofluorescence,Image|Width_AF647,Image|Width_KuO,Image|Metadata_Well,Image|Metadata_C,Image|Metadata_T,Image|Metadata_Site,Image|Metadata_ChannelName,Image|Metadata_SizeY,Image|Metadata_SizeZ,Image|Metadata_SizeC,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Run_2
    Overwrite existing files without warning?:No
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
SaveImages:[module_num:69|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
    Select the type of image to save:Image
    Select the image to save:CellImageMK
    Select method for constructing file names:From image filename
    Select image name for file prefix:GFP
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Downloads/CellProfiler/VWF_066_VWF_067_2D/Cellpose
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
