CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:39
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:or (file does endwith ".tif") (file does endwith ".tiff")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<VWF>.*)_Ch(?P<Channelnb>.*).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:Yes
    Relative pixel spacing in X:0.8286
    Relative pixel spacing in Y:0.8286
    Relative pixel spacing in Z:3
    Select the rule criteria:and (metadata does Channelnb "1")
    Name to assign these images:GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channelnb "2")
    Name to assign these images:AF647
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channelnb "3")
    Name to assign these images:KUO
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channelnb "4")
    Name to assign these images:Autofluo
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:VWF

Resize:[module_num:5|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
    Select the input image:Autofluo
    Name the output image:ResizeAutofluo
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:0.25
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    Interpolation method:Nearest Neighbor
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    Additional image count:3
    Select the additional image?:KUO
    Name the output image:ResizedKUO
    Select the additional image?:GFP
    Name the output image:ResizedGFP
    Select the additional image?:AF647
    Name the output image:ResizedAF647

ImageMath:[module_num:6|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
    Operation:None
    Raise the power of the result by:0.75
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMathautofluo
    Image or measurement?:Image
    Select the first image:ResizeAutofluo
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
GaussianFilter:[module_num:7|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
    Select the input image:ImageAfterMathautofluo
    Name the output image:GaussianFilterautofluo
    Sigma:3

MeasureImageIntensity:[module_num:8|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
    Select images to measure:GaussianFilterautofluo
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:No
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
Threshold:[module_num:9|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
    Select the input image:GaussianFilterautofluo
    Name the output image:Thresholdimage
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:0.9
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
MaskImage:[module_num:10|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
    Select the input image:GaussianFilterautofluo
    Name the output image:Autofluotiles
    Use objects or an image as a mask?:Image
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    Select image for mask:Thresholdimage
    Invert the mask?:No

Threshold:[module_num:11|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notes:['use the imaged where all the autofluorescent cells have been removed to generate the threshold? ']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
    Select the input image:Autofluotiles
    Name the output image:Thresholdedbone
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.15
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
MaskImage:[module_num:12|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
    Select the input image:GaussianFilterautofluo
    Name the output image:Bonemarrow
    Use objects or an image as a mask?:Image
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    Select image for mask:Thresholdedbone
    Invert the mask?:Yes

ImageMath:[module_num:13|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enabled:False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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:Bonemarrow
    Image or measurement?:Image
    Select the first image:Autofluotiles
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ConvertImageToObjects:[module_num:14|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
    Select the input image:Bonemarrow
    Name the output object:ConvertImageToObjectsBoneMarrow
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

OverlayOutlines:[module_num:15|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:GaussianFilterautofluo
    Name the output image:OrigOverlayBM
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:ConvertImageToObjectsBoneMarrow

MeasureObjectSizeShape:[module_num:16|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notes:['BONE MARROW VOLUME']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
    Select object sets to measure:ConvertImageToObjectsBoneMarrow
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

ImageMath:[module_num:17|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enabled:False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
    Operation:None
    Raise the power of the result by:0.9
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMathKUO
    Image or measurement?:Image
    Select the first image:KUO
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
Threshold:[module_num:18|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notes:['Thresholding to exclude the bright autofluorescent background, threshold is including some pixels in the marrow (not high enough) yet it is not including everything on the edges (too high) ']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enabled:False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
    Select the input image:ImageAfterMathKUO
    Name the output image:BackgroundThresholdKUO
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.03,1
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
GaussianFilter:[module_num:19|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enabled:False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
    Select the input image:ImageAfterMathKUO
    Name the output image:GaussianFilterKUO
    Sigma:3

ImageMath:[module_num:20|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enabled:False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
    Operation:Subtract
    Raise the power of the result by:0.5
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMathKUOautofluo
    Image or measurement?:Image
    Select the first image:GaussianFilterKUO
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:GaussianFilterautofluo
    Multiply the second image by:1.0
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
Threshold:[module_num:21|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enabled:False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
    Select the input image:ImageAfterMathKUOautofluo
    Name the output image:ThresholdedKUO
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.05,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
RemoveHoles:[module_num:22|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
    Select the input image:ThresholdedKUO
    Name the output image:RemoveHoles
    Size of holes to fill:20

Watershed:[module_num:23|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
    Select the input image:RemoveHoles
    Name the output object:Watershed
    Use advanced settings?:No
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:1
    Compactness:0.0
    Footprint:10
    Downsample:2
    Separate watershed labels:No
    Declump method:Shape
    Reference Image:None
    Segmentation distance transform smoothing factor:1.0
    Minimum distance between seeds:1
    Minimum absolute internal distance:0.0
    Pixels from border to exclude:0
    Maximum number of seeds:-1
    Structuring element for seed dilation:Ball,1

MeasureObjectSizeShape:[module_num:24|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
    Select object sets to measure:Watershed
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

FilterObjects:[module_num:25|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
    Select the objects to filter:Watershed
    Name the output objects:FilterObjects
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_Volume
    Filter using a minimum measurement value?:Yes
    Minimum value:300
    Filter using a maximum measurement value?:Yes
    Maximum value:500

GaussianFilter:[module_num:26|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
    Select the input image:GFP
    Name the output image:GaussianFilterGFP
    Sigma:2

Threshold:[module_num:27|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
    Select the input image:GaussianFilterGFP
    Name the output image:ThresholdGFP
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.03,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
RemoveHoles:[module_num:28|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
    Select the input image:ThresholdGFP
    Name the output image:RemoveHolesGFP
    Size of holes to fill:20

Watershed:[module_num:29|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
    Select the input image:RemoveHolesGFP
    Name the output object:WatershedGFP
    Use advanced settings?:No
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:1
    Compactness:0.0
    Footprint:10
    Downsample:2
    Separate watershed labels:No
    Declump method:Shape
    Reference Image:None
    Segmentation distance transform smoothing factor:1.0
    Minimum distance between seeds:1
    Minimum absolute internal distance:0.0
    Pixels from border to exclude:0
    Maximum number of seeds:-1
    Structuring element for seed dilation:Disk,1

ImageMath:[module_num:30|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
    Operation:None
    Raise the power of the result by:0.8
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMathAF647
    Image or measurement?:Image
    Select the first image:AF647
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
GaussianFilter:[module_num:31|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
    Select the input image:ImageAfterMathAF647
    Name the output image:GaussianFilterAF647
    Sigma:2

Threshold:[module_num:32|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
    Select the input image:GaussianFilterAF647
    Name the output image:ThresholdAF647
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.027,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
RemoveHoles:[module_num:33|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
    Select the input image:ThresholdAF647
    Name the output image:RemoveHolesAF647
    Size of holes to fill:20

Watershed:[module_num:34|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
    Select the input image:RemoveHolesAF647
    Name the output object:WatershedAF647
    Use advanced settings?:No
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:1
    Compactness:0.0
    Footprint:10
    Downsample:2
    Separate watershed labels:No
    Declump method:Shape
    Reference Image:None
    Segmentation distance transform smoothing factor:1.0
    Minimum distance between seeds:1
    Minimum absolute internal distance:0.0
    Pixels from border to exclude:0
    Maximum number of seeds:-1
    Structuring element for seed dilation:Disk,1

MeasureObjectIntensity:[module_num:35|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
    Select images to measure:AF647, Autofluo, GFP, KUO
    Select objects to measure:FilterObjects, WatershedAF647, WatershedGFP

MeasureObjectNeighbors:[module_num:36|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
    Select objects to measure:FilterObjects
    Select neighboring objects to measure:WatershedGFP
    Method to determine neighbors:Within a specified distance
    Neighbor distance:20
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:37|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
    Select objects to measure:FilterObjects
    Select neighboring objects to measure:WatershedAF647
    Method to determine neighbors:Within a specified distance
    Neighbor distance:20
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
ExportToSpreadsheet:[module_num:38|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Downloads/CellProfiler/VWF_066_3D/output
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:WatershedGFP|Location_MaxIntensity_Z_KUO,WatershedGFP|Location_MaxIntensity_Z_AF647,WatershedGFP|Location_MaxIntensity_Z_Autofluo,WatershedGFP|Location_MaxIntensity_Z_GFP,WatershedGFP|Location_MaxIntensity_X_GFP,WatershedGFP|Location_MaxIntensity_X_AF647,WatershedGFP|Location_MaxIntensity_X_KUO,WatershedGFP|Location_MaxIntensity_X_Autofluo,WatershedGFP|Location_MaxIntensity_Y_KUO,WatershedGFP|Location_MaxIntensity_Y_AF647,WatershedGFP|Location_MaxIntensity_Y_GFP,WatershedGFP|Location_MaxIntensity_Y_Autofluo,WatershedGFP|Location_CenterMassIntensity_Z_KUO,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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
SaveImages:[module_num:39|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
    Select the type of image to save:Image
    Select the image to save:ThresholdedKUO
    Select method for constructing file names:From image filename
    Select image name for file prefix:KUO
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Downloads/CellProfiler/VWF_066_3D/output
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
