CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:10
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:or (file does endwith ".tif") (file does endwith ".tiff")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<VWF>.*)_Ch(?P<Channelnb>.*).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:Ilastik
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:Yes
    Relative pixel spacing in X:0.8286
    Relative pixel spacing in Y:0.8286
    Relative pixel spacing in Z:3
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Threshold:[module_num:5|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notes:['This module was to threshold the Ilastik Images']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
    Select the input image:Ilastik
    Name the output image:ThresholdIlastik
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:3
    Threshold correction factor:3.5
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
ConvertImageToObjects:[module_num:6|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
    Select the input image:ThresholdIlastik
    Name the output object:ConvertImageToObjectsIlastik
    Convert to boolean image:Yes
    Preserve original labels:Yes
    Background label:0
    Connectivity:0

FillObjects:[module_num:7|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
    Select the input object:ConvertImageToObjectsIlastik
    Name the output object:FillObjectsIlastik
    Minimum hole size:50
    Planewise fill:Yes

MeasureObjectSizeShape:[module_num:8|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notes:['BONE MARROW VOLUME']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
    Select object sets to measure:FillObjectsIlastik
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

ExportToSpreadsheet:[module_num:9|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Downloads/CellProfiler/TilescanKuO
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:FillObjectsIlastik|Location_Center_Z,FillObjectsIlastik|Location_Center_X,FillObjectsIlastik|Location_Center_Y,FillObjectsIlastik|Parent_ConvertImageToObjectsIlastik,FillObjectsIlastik|Number_Object_Number,FillObjectsIlastik|AreaShape_BoundingBoxMaximum_Z,FillObjectsIlastik|AreaShape_BoundingBoxMaximum_Y,FillObjectsIlastik|AreaShape_BoundingBoxMaximum_X,FillObjectsIlastik|AreaShape_Center_X,FillObjectsIlastik|AreaShape_Center_Z,FillObjectsIlastik|AreaShape_Center_Y,FillObjectsIlastik|AreaShape_MinorAxisLength,FillObjectsIlastik|AreaShape_MajorAxisLength,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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
SaveImages:[module_num:10|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
    Select the type of image to save:Image
    Select the image to save:ThresholdIlastik
    Select method for constructing file names:From image filename
    Select image name for file prefix:Ilastik
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Downloads/CellProfiler/TilescanKuO
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
