CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:54
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.', '', 'VWF_045_MS21128_M2_tilescan2_padded-stiched_Ch1', '']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
    Filter images?:Custom
    Select the rule criteria:or (file does endwith ".tif") (file does endwith ".tiff")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<VWF>.*)_Ch(?P<Channelnb>.*).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:Yes
    Relative pixel spacing in X:1
    Relative pixel spacing in Y:1
    Relative pixel spacing in Z:1
    Select the rule criteria:and (metadata does Channelnb "1")
    Name to assign these images:GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channelnb "2")
    Name to assign these images:AF647
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channelnb "3")
    Name to assign these images:KUO
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channelnb "4")
    Name to assign these images:Autofluo
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Resize:[module_num:5|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enabled:False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
    Select the input image:Autofluo
    Name the output image:ResizeAutofluo
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:0.25
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    Interpolation method:Nearest Neighbor
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    Additional image count:3
    Select the additional image?:KUO
    Name the output image:ResizedKUO
    Select the additional image?:GFP
    Name the output image:ResizedGFP
    Select the additional image?:AF647
    Name the output image:ResizedAF647

ImageMath:[module_num:6|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enabled:False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
    Operation:None
    Raise the power of the result by:0.75
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMathautofluo
    Image or measurement?:Image
    Select the first image:ResizeAutofluo
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
GaussianFilter:[module_num:7|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
    Select the input image:Autofluo
    Name the output image:GaussianFilterautofluo
    Sigma:3

MeasureImageIntensity:[module_num:8|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enabled:False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
    Select images to measure:GaussianFilterautofluo
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:No
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
Threshold:[module_num:9|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enabled:False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
    Select the input image:GaussianFilterautofluo
    Name the output image:Thresholdimage
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:0.9
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
MaskImage:[module_num:10|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enabled:False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
    Select the input image:GaussianFilterautofluo
    Name the output image:Autofluotiles
    Use objects or an image as a mask?:Image
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    Select image for mask:Thresholdimage
    Invert the mask?:No

Threshold:[module_num:11|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notes:['use the imaged where all the autofluorescent cells have been removed to generate the threshold? ']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enabled:False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
    Select the input image:Autofluotiles
    Name the output image:Thresholdedbone
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.15
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
MaskImage:[module_num:12|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enabled:False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
    Select the input image:GaussianFilterautofluo
    Name the output image:Bonemarrow
    Use objects or an image as a mask?:Image
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    Select image for mask:Thresholdedbone
    Invert the mask?:Yes

ImageMath:[module_num:13|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enabled:False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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:Bonemarrow
    Image or measurement?:Image
    Select the first image:Autofluotiles
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ConvertImageToObjects:[module_num:14|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enabled:False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
    Select the input image:Bonemarrow
    Name the output object:ConvertImageToObjectsBoneMarrow
    Convert to boolean image:No
    Preserve original labels:Yes
    Background label:0
    Connectivity:0

OverlayOutlines:[module_num:15|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Ilastik
    Name the output image:BM_Ilastik_Overlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:Red
    Select objects to display:ConvertImageToObjectsBoneMarrow

Threshold:[module_num:16|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notes:['This module was to threshold the Ilastik Images']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enabled:False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
    Select the input image:Ilastik
    Name the output image:ThresholdIlastik
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:3
    Threshold correction factor:3.5
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
ConvertImageToObjects:[module_num:17|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enabled:False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
    Select the input image:ThresholdIlastik
    Name the output object:ConvertImageToObjectsIlastik
    Convert to boolean image:Yes
    Preserve original labels:Yes
    Background label:0
    Connectivity:0

FillObjects:[module_num:18|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enabled:False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
    Select the input object:ConvertImageToObjectsIlastik
    Name the output object:FillObjectsIlastik
    Minimum hole size:50
    Planewise fill:Yes

MeasureObjectSizeShape:[module_num:19|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notes:['BONE MARROW VOLUME']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enabled:False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
    Select object sets to measure:FillObjectsIlastik
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

OverlayObjects:[module_num:20|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enabled:False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
    Input:None
    Name the output image:OverlayObjects
    Objects:Do not use
    Opacity:0.3

ImageMath:[module_num:21|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enabled:False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
    Operation:None
    Raise the power of the result by:0.9
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMathKUO
    Image or measurement?:Image
    Select the first image:KUO
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
Threshold:[module_num:22|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notes:['Thresholding to exclude the bright autofluorescent background, threshold is including some pixels in the marrow (not high enough) yet it is not including everything on the edges (too high) ']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enabled:False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
    Select the input image:ImageAfterMathKUO
    Name the output image:BackgroundThresholdKUO
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.03,1
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
GaussianFilter:[module_num:23|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
    Select the input image:KUO
    Name the output image:GaussianFilterKUO
    Sigma:3

ImageMath:[module_num:24|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notes:['was 1 for autofluo']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
    Operation:Subtract
    Raise the power of the result by:0.5
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMathKUOautofluo
    Image or measurement?:Image
    Select the first image:GaussianFilterKUO
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:GaussianFilterautofluo
    Multiply the second image by:1.3
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
Threshold:[module_num:25|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
    Select the input image:ImageAfterMathKUOautofluo
    Name the output image:ThresholdedKUO
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:0.9
    Lower and upper bounds on threshold:0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
RemoveHoles:[module_num:26|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
    Select the input image:ThresholdedKUO
    Name the output image:RemoveHolesKUO
    Size of holes to fill:10

Watershed:[module_num:27|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
    Select the input image:RemoveHolesKUO
    Name the output object:WatershedKUO
    Use advanced settings?:No
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:1
    Compactness:0.0
    Footprint:10
    Downsample:2
    Separate watershed labels:No
    Declump method:Shape
    Reference Image:None
    Segmentation distance transform smoothing factor:1.0
    Minimum distance between seeds:1
    Minimum absolute internal distance:0.0
    Pixels from border to exclude:0
    Maximum number of seeds:-1
    Structuring element for seed dilation:Ball,1

Threshold:[module_num:28|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
    Select the input image:GaussianFilterautofluo
    Name the output image:Thresholdautofluo
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:4
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
MeasureObjectIntensity:[module_num:29|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
    Select images to measure:Thresholdautofluo
    Select objects to measure:WatershedKUO

MeasureObjectSizeShape:[module_num:30|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
    Select object sets to measure:WatershedKUO
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

FilterObjects:[module_num:31|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
    Select the objects to filter:WatershedKUO
    Name the output objects:FilterObjectsKUO
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_Volume
    Filter using a minimum measurement value?:Yes
    Minimum value:300
    Filter using a maximum measurement value?:Yes
    Maximum value:3500
    Select the measurement to filter by:Intensity_UpperQuartileIntensity_Thresholdautofluo
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:1.0

GaussianFilter:[module_num:32|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
    Select the input image:GFP
    Name the output image:GaussianFilterGFP
    Sigma:2

HistogramEqualization:[module_num:33|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
    Select the input image:GaussianFilterGFP
    Name the output image:HistogramEqualizationGFP
    Bins:350
    Mask:Leave blank
    Local:Yes
    Tile Size:50
    Clip limit:0.01
    Is you image 3D?:Yes
    Do framewise calculation?:No
    Tile Size (Z):5

Threshold:[module_num:34|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
    Select the input image:HistogramEqualizationGFP
    Name the output image:ThresholdGFP
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.03,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
RemoveHoles:[module_num:35|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
    Select the input image:ThresholdGFP
    Name the output image:RemoveHolesGFP
    Size of holes to fill:20

ImageMath:[module_num:36|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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMathDP
    Image or measurement?:Image
    Select the first image:RemoveHolesKUO
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:RemoveHolesGFP
    Multiply the second image by:1.0
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
MeasureObjectIntensity:[module_num:37|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
    Select images to measure:ImageAfterMathDP
    Select objects to measure:FilterObjectsKUO

FilterObjects:[module_num:38|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
    Select the objects to filter:FilterObjectsKUO
    Name the output objects:FilterObjectsDP
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:Yes
    Name the objects removed by the filter:RemovedObjectsSP
    Select the measurement to filter by:Intensity_MeanIntensity_ImageAfterMathDP
    Filter using a minimum measurement value?:Yes
    Minimum value:0.5
    Filter using a maximum measurement value?:No
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
Watershed:[module_num:39|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enabled:False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
    Select the input image:RemoveHolesGFP
    Name the output object:WatershedGFP
    Use advanced settings?:No
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:1
    Compactness:0.0
    Footprint:10
    Downsample:2
    Separate watershed labels:No
    Declump method:Shape
    Reference Image:None
    Segmentation distance transform smoothing factor:1.0
    Minimum distance between seeds:1
    Minimum absolute internal distance:0.0
    Pixels from border to exclude:0
    Maximum number of seeds:-1
    Structuring element for seed dilation:Disk,1

ImageMath:[module_num:40|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
    Operation:None
    Raise the power of the result by:0.8
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMathAF647
    Image or measurement?:Image
    Select the first image:AF647
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
GaussianFilter:[module_num:41|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
    Select the input image:ImageAfterMathAF647
    Name the output image:GaussianFilterAF647
    Sigma:2

Threshold:[module_num:42|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
    Select the input image:GaussianFilterAF647
    Name the output image:ThresholdAF647
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.027,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
RemoveHoles:[module_num:43|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
    Select the input image:ThresholdAF647
    Name the output image:RemoveHolesAF647
    Size of holes to fill:20

Watershed:[module_num:44|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enabled:False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
    Select the input image:RemoveHolesAF647
    Name the output object:WatershedAF647
    Use advanced settings?:No
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:1
    Compactness:0.0
    Footprint:10
    Downsample:2
    Separate watershed labels:No
    Declump method:Shape
    Reference Image:None
    Segmentation distance transform smoothing factor:1.0
    Minimum distance between seeds:1
    Minimum absolute internal distance:0.0
    Pixels from border to exclude:0
    Maximum number of seeds:-1
    Structuring element for seed dilation:Disk,1

ConvertImageToObjects:[module_num:45|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
    Select the input image:RemoveHolesAF647
    Name the output object:ConvertImageToObjectsAF647
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

MeasureObjectSizeShape:[module_num:46|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
    Select object sets to measure:ConvertImageToObjectsAF647
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:47|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
    Select images to measure:AF647, Autofluo, GFP, KUO
    Select objects to measure:ConvertImageToObjectsAF647, FilterObjectsDP, RemovedObjectsSP

MeasureObjectNeighbors:[module_num:48|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enabled:False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
    Select objects to measure:FilterObjectsDP
    Select neighboring objects to measure:WatershedGFP
    Method to determine neighbors:Within a specified distance
    Neighbor distance:20
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:49|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enabled:False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
    Select objects to measure:RemovedObjectsSP
    Select neighboring objects to measure:WatershedGFP
    Method to determine neighbors:Within a specified distance
    Neighbor distance:20
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:50|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
    Select objects to measure:FilterObjectsDP
    Select neighboring objects to measure:ConvertImageToObjectsAF647
    Method to determine neighbors:Within a specified distance
    Neighbor distance:20
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:51|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
    Select objects to measure:RemovedObjectsSP
    Select neighboring objects to measure:ConvertImageToObjectsAF647
    Method to determine neighbors:Within a specified distance
    Neighbor distance:20
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
ExportToSpreadsheet:[module_num:52|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Downloads/CellProfiler/TilescanKuO
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:FilterObjectsDP|Neighbors_PercentTouching_ConvertImageToObjectsAF647_20,FilterObjectsDP|Neighbors_FirstClosestDistance_ConvertImageToObjectsAF647_20,FilterObjectsDP|Neighbors_FirstClosestObjectNumber_ConvertImageToObjectsAF647_20,FilterObjectsDP|Neighbors_SecondClosestDistance_ConvertImageToObjectsAF647_20,FilterObjectsDP|Neighbors_AngleBetweenNeighbors_ConvertImageToObjectsAF647_20,FilterObjectsDP|Neighbors_NumberOfNeighbors_ConvertImageToObjectsAF647_20,FilterObjectsDP|Neighbors_SecondClosestObjectNumber_ConvertImageToObjectsAF647_20,FilterObjectsDP|Intensity_IntegratedIntensityEdge_GFP,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:VWF_045_M2
    Overwrite existing files without warning?:No
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
SaveImages:[module_num:53|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
    Select the type of image to save:Image
    Select the image to save:RemoveHolesAF647
    Select method for constructing file names:From image filename
    Select image name for file prefix:AF647
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:AF647segmentation
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Downloads/CellProfiler/TilescanKuO
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveCroppedObjects:[module_num:54|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
    Objects:FilterObjectsKUO
    Directory:Default Input Folder sub-folder|Downloads/CellProfiler/TilescanKuO
    Saved file format:8-bit tiff
    Do you want to save cropped images or object masks?:Images
    Image:KUO
