CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:59
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Filename>.*)_Ch(?P<Channelnb>.*).tif(?P<Format>.*)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:5
    Single images count:0
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    Process as 3D?:Yes
    Relative pixel spacing in X:0.8286
    Relative pixel spacing in Y:0.8286
    Relative pixel spacing in Z:3
    Select the rule criteria:and (file does contain "Ch1")
    Name to assign these images:GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Ch2")
    Name to assign these images:AF647
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Ch3")
    Name to assign these images:KUO
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Ch4")
    Name to assign these images:Autofluo
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Ch6")
    Name to assign these images:Ilastik
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Filename

ImageMath:[module_num:5|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enabled:False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
    Operation:None
    Raise the power of the result by:0.8
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMathKUO
    Image or measurement?:Image
    Select the first image:KUO
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:6|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enabled:False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
    Operation:None
    Raise the power of the result by:0.75
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMathautofluo
    Image or measurement?:Image
    Select the first image:Autofluo
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
GaussianFilter:[module_num:7|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enabled:False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
    Select the input image:KUO
    Name the output image:GaussianFilterKUO
    Sigma:3

GaussianFilter:[module_num:8|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enabled:False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
    Select the input image:Autofluo
    Name the output image:GaussianFilterautofluo
    Sigma:3

GaussianFilter:[module_num:9|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
    Select the input image:GFP
    Name the output image:GaussianFilterGFP
    Sigma:2

GaussianFilter:[module_num:10|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enabled:False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
    Select the input image:AF647
    Name the output image:GaussianFilterAF647
    Sigma:2

HistogramEqualization:[module_num:11|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notes:['256 bin size']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
    Select the input image:GaussianFilterGFP
    Name the output image:HistogramEqualizationGFP
    Bins:200
    Mask:Leave blank
    Local:Yes
    Tile Size:50
    Clip limit:0.01
    Is you image 3D?:Yes
    Do framewise calculation?:No
    Tile Size (Z):5

ImageMath:[module_num:12|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notes:['raise power of results by 0.5']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enabled:False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
    Operation:Subtract
    Raise the power of the result by:1
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMathKUOautofluo
    Image or measurement?:Image
    Select the first image:GaussianFilterKUO
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:GaussianFilterautofluo
    Multiply the second image by:1.2
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
Threshold:[module_num:13|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notes:['smoothing scale 2, correction factor 1.4 ', 'robust background sd 41, 1.3 correction']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enabled:False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
    Select the input image:ImageAfterMathKUOautofluo
    Name the output image:ThresholdedKUO
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
RemoveHoles:[module_num:14|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enabled:False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
    Select the input image:ThresholdedKUO
    Name the output image:RemoveHoles
    Size of holes to fill:20

Threshold:[module_num:15|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enabled:False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
    Select the input image:GaussianFilterGFP
    Name the output image:ThresholdGFP
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.03,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
ImageMath:[module_num:16|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enabled:False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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMathDP
    Image or measurement?:Image
    Select the first image:ThresholdedKUO
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:ThresholdGFP
    Multiply the second image by:1.0
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
Watershed:[module_num:17|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enabled:False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
    Select the input image:RemoveHoles
    Name the output object:Watershed
    Use advanced settings?:No
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:1
    Compactness:0.0
    Footprint:10
    Downsample:2
    Separate watershed labels:No
    Declump method:Shape
    Reference Image:None
    Segmentation distance transform smoothing factor:1.0
    Minimum distance between seeds:1
    Minimum absolute internal distance:0.0
    Pixels from border to exclude:0
    Maximum number of seeds:-1
    Structuring element for seed dilation:Ball,1

MeasureObjectSizeShape:[module_num:18|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enabled:False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
    Select object sets to measure:Watershed
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:19|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notes:['600']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enabled:False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
    Select the objects to filter:Watershed
    Name the output objects:FilterObjectsKUO
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_Volume
    Filter using a minimum measurement value?:Yes
    Minimum value:180
    Filter using a maximum measurement value?:No
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
MeasureObjectIntensity:[module_num:20|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enabled:False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
    Select images to measure:ImageAfterMathDP
    Select objects to measure:FilterObjectsKUO

FilterObjects:[module_num:21|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enabled:False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
    Select the objects to filter:FilterObjectsKUO
    Name the output objects:FilterObjectsDP
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:Yes
    Name the objects removed by the filter:RemovedObjectsSP
    Select the measurement to filter by:Intensity_MeanIntensity_ImageAfterMathDP
    Filter using a minimum measurement value?:Yes
    Minimum value:0.5
    Filter using a maximum measurement value?:No
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
RemoveHoles:[module_num:22|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enabled:False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
    Select the input image:ThresholdGFP
    Name the output image:RemoveHolesGFP
    Size of holes to fill:20

Watershed:[module_num:23|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enabled:False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
    Select the input image:RemoveHolesGFP
    Name the output object:WatershedGFP
    Use advanced settings?:No
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:1
    Compactness:0.0
    Footprint:10
    Downsample:2
    Separate watershed labels:No
    Declump method:Shape
    Reference Image:None
    Segmentation distance transform smoothing factor:1.0
    Minimum distance between seeds:1
    Minimum absolute internal distance:0.0
    Pixels from border to exclude:0
    Maximum number of seeds:-1
    Structuring element for seed dilation:Disk,1

ImageMath:[module_num:24|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enabled:False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
    Operation:None
    Raise the power of the result by:0.8
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMathAF647
    Image or measurement?:Image
    Select the first image:AF647
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
GaussianFilter:[module_num:25|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enabled:False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
    Select the input image:ImageAfterMathAF647
    Name the output image:GaussianFilterAF647
    Sigma:2

Threshold:[module_num:26|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notes:['0.027 threshold bound']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enabled:False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
    Select the input image:GaussianFilterAF647
    Name the output image:ThresholdAF647
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:2
    Lower and upper bounds on threshold:0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
RemoveHoles:[module_num:27|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notes:['20']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enabled:False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
    Select the input image:ThresholdAF647
    Name the output image:RemoveHolesAF647
    Size of holes to fill:145

Watershed:[module_num:28|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enabled:False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
    Select the input image:RemoveHolesAF647
    Name the output object:WatershedAF647
    Use advanced settings?:No
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:1
    Compactness:0.0
    Footprint:10
    Downsample:2
    Separate watershed labels:No
    Declump method:Shape
    Reference Image:None
    Segmentation distance transform smoothing factor:1.0
    Minimum distance between seeds:1
    Minimum absolute internal distance:0.0
    Pixels from border to exclude:0
    Maximum number of seeds:-1
    Structuring element for seed dilation:Disk,1

Resize:[module_num:29|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enabled:False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
    Select the input image:HistogramEqualizationGFP
    Name the output image:ResizeHEGFP
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:0.75
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    Interpolation method:Nearest Neighbor
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    Additional image count:0

Watershed:[module_num:30|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notes:['Intensity keeps MK as one object but shape is worst ']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enabled:False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
    Select the input image:HistogramEqualizationGFP
    Name the output object:WatershedMKHE
    Use advanced settings?:Yes
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:1
    Compactness:0.0
    Footprint:20
    Downsample:1
    Separate watershed labels:No
    Declump method:Intensity
    Reference Image:HistogramEqualizationGFP
    Segmentation distance transform smoothing factor:0
    Minimum distance between seeds:10
    Minimum absolute internal distance:0.0
    Pixels from border to exclude:0
    Maximum number of seeds:-1
    Structuring element for seed dilation:cube,20

ResizeObjects:[module_num:31|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enabled:False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
    Name the output object:ResizeObjects
    Method:Factor
    Factor:0.25
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
Threshold:[module_num:32|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notes:['9 sd, 1.3 captures bright MK']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enabled:False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
    Select the input image:HistogramEqualizationGFP
    Name the output image:ThresholdMKHE
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.0
    Threshold correction factor:1.3
    Lower and upper bounds on threshold:0.0,1.0
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    Size of adaptive window:50
    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:9
    Thresholding method:Robust Background

Watershed:[module_num:33|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enabled:False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
    Select the input image:ThresholdMKHE
    Name the output object:WatershedMK
    Use advanced settings?:Yes
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:1
    Compactness:0.0
    Footprint:20
    Downsample:1
    Separate watershed labels:No
    Declump method:Intensity
    Reference Image:HistogramEqualizationGFP
    Segmentation distance transform smoothing factor:1.0
    Minimum distance between seeds:1
    Minimum absolute internal distance:0.0
    Pixels from border to exclude:0
    Maximum number of seeds:-1
    Structuring element for seed dilation:cube,10

MeasureObjectSizeShape:[module_num:34|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enabled:False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
    Select object sets to measure:WatershedMK
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:35|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enabled:False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
    Select the objects to filter:WatershedMK
    Name the output objects:FilterObjectsMK
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_Volume
    Filter using a minimum measurement value?:Yes
    Minimum value:1500
    Filter using a maximum measurement value?:No
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
DilateObjects:[module_num:36|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enabled:False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
    Select the input object:FilterObjectsMK
    Name the output object:DilateObjectsMK
    Structuring element:disk,10

MaskImage:[module_num:37|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enabled:False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
    Select the input image:HistogramEqualizationGFP
    Name the output image:MaskedGFP
    Use objects or an image as a mask?:Objects
    Select object for mask:DilateObjectsMK
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    Invert the mask?:Yes

EnhanceOrSuppressFeatures:[module_num:38|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enabled:False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
    Select the input image:MaskedGFP
    Name the output image:Enhancecells
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow
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
Threshold:[module_num:39|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enabled:False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
    Select the input image:Enhancecells
    Name the output image:Thresholdcells
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.0
    Threshold correction factor:1.3
    Lower and upper bounds on threshold:0.0,1.0
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    Size of adaptive window:50
    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:9
    Thresholding method:Robust Background

Watershed:[module_num:40|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enabled:False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
    Select the input image:Thresholdcells
    Name the output object:WatershedGFPcells
    Use advanced settings?:Yes
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:1
    Compactness:0.0
    Footprint:20
    Downsample:1
    Separate watershed labels:No
    Declump method:Intensity
    Reference Image:HistogramEqualizationGFP
    Segmentation distance transform smoothing factor:1.0
    Minimum distance between seeds:1
    Minimum absolute internal distance:0.0
    Pixels from border to exclude:0
    Maximum number of seeds:-1
    Structuring element for seed dilation:cube,10

Threshold:[module_num:41|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
    Select the input image:Ilastik
    Name the output image:ThresholdIlastik
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.2
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
Watershed:[module_num:42|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enabled:False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
    Select the input image:ThresholdIlastik
    Name the output object:WatershedIlastik
    Use advanced settings?:Yes
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:1
    Compactness:0.0
    Footprint:8
    Downsample:1
    Separate watershed labels:No
    Declump method:Shape
    Reference Image:None
    Segmentation distance transform smoothing factor:1.0
    Minimum distance between seeds:1
    Minimum absolute internal distance:0.0
    Pixels from border to exclude:0
    Maximum number of seeds:-1
    Structuring element for seed dilation:ball,4

ConvertImageToObjects:[module_num:43|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
    Select the input image:ThresholdIlastik
    Name the output object:ConvertImageToObjectsIlastik
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

FillObjects:[module_num:44|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enabled:False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
    Select the input object:ConvertImageToObjectsIlastik
    Name the output object:FillObjectsGFP
    Minimum hole size:5
    Planewise fill:Yes

OverlayOutlines:[module_num:45|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ThresholdMKHE
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:Red
    Select objects to display:ConvertImageToObjectsIlastik

MeasureObjectSizeShape:[module_num:46|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
    Select object sets to measure:ConvertImageToObjectsIlastik
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:47|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
    Select the objects to filter:ConvertImageToObjectsIlastik
    Name the output objects:FilterObjectsIlastik
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_Volume
    Filter using a minimum measurement value?:Yes
    Minimum value:18
    Filter using a maximum measurement value?:No
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
MeasureObjectIntensity:[module_num:48|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
    Select images to measure:GFP
    Select objects to measure:FilterObjectsIlastik

MeasureObjectSizeShape:[module_num:49|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
    Select object sets to measure:FilterObjectsIlastik
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:50|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enabled:False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
    Select the objects to filter:FilterObjectsIlastik
    Name the output objects:FilterObjectsIlastikintensity
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:Intensity_MaxIntensity_GFP
    Filter using a minimum measurement value?:Yes
    Minimum value:0.03
    Filter using a maximum measurement value?:No
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
OverlayOutlines:[module_num:51|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:HistogramEqualizationGFP
    Name the output image:OrigOverlay
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max possible
    How to outline:Thick
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    Select objects to display:FilterObjectsIlastik

Threshold:[module_num:52|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enabled:False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
    Select the input image:GaussianFilterAF647
    Name the output image:ThresholdAF647
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
MeasureObjectIntensity:[module_num:53|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enabled:False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
    Select images to measure:ThresholdAF647
    Select objects to measure:FilterObjectsIlastik

FilterObjects:[module_num:54|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enabled:False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
    Select the objects to filter:FilterObjectsIlastik
    Name the output objects:FilterObjectsplatelets
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Keep removed objects as a seperate set?:Yes
    Name the objects removed by the filter:RemovedObjectsGFP
    Select the measurement to filter by:Intensity_MeanIntensity_ThresholdAF647
    Filter using a minimum measurement value?:Yes
    Minimum value:0.3
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:AreaShape_Volume
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:1000

MeasureObjectIntensity:[module_num:55|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enabled:False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
    Select images to measure:AF647, Autofluo, GFP, KUO
    Select objects to measure:FilterObjects, WatershedAF647, WatershedGFP

MeasureObjectNeighbors:[module_num:56|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enabled:False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
    Select objects to measure:FilterObjects
    Select neighboring objects to measure:WatershedGFP
    Method to determine neighbors:Within a specified distance
    Neighbor distance:20
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:57|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enabled:False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
    Select objects to measure:FilterObjects
    Select neighboring objects to measure:WatershedAF647
    Method to determine neighbors:Within a specified distance
    Neighbor distance:20
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
ExportToSpreadsheet:[module_num:58|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Downloads/CellProfiler/MK_training/MK_output
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|Series_Ilastik,Image|Series_KUO,Image|Series_Autofluo,Image|Series_GFP,Image|Series_AF647,Image|MD5Digest_AF647,Image|MD5Digest_KUO,Image|MD5Digest_Autofluo,Image|MD5Digest_GFP,Image|MD5Digest_Ilastik,Image|ModuleError_03NamesAndTypes,Image|ModuleError_43ConvertImageToObjects,Image|ModuleError_11HistogramEqualization,Image|ModuleError_02Metadata,Image|ModuleError_04Groups,Image|ModuleError_01Images,Image|ModuleError_09GaussianFilter,Image|ModuleError_48MeasureObjectIntensity,Image|ModuleError_47FilterObjects,Image|ModuleError_41Threshold,Image|ModuleError_46MeasureObjectSizeShape,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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
SaveImages:[module_num:59|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:Ilastik
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Downloads/CellProfiler/MK_training/MK_ouput_test_02
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
