CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:52
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.', '', 'corrected_movies_2_1movieexampls/movies_apply_2_splitchannels + trackmate_output_split']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '^(?P<VWF>.*)_Ch(?P<Channelnb>.*)_xyzCorrected.tif']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<VWF>.*)_Ch(?P<Channelnb>.*)_xyzCorrected.tif - T=(?P<Timepoint>.*).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '', '0.5524285', '1.92']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:7
    Single images count:0
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    Process as 3D?:Yes
    Relative pixel spacing in X:1
    Relative pixel spacing in Y:1
    Relative pixel spacing in Z:1
    Select the rule criteria:and (file does contain "Ch1")
    Name to assign these images:GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Ch2")
    Name to assign these images:AF647
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Ch3") (directory doesnot contain "KuO_output")
    Name to assign these images:KUO
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Ch4")
    Name to assign these images:Autofluo
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Ch8")
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    Name to assign these objects:track
    Select the image type:Objects
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    Select the rule criteria:and (directory does contain "KuO_output") (file does contain "Ch3")
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    Name to assign these objects:KuO_segmentation
    Select the image type:Objects
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    Select the rule criteria:and (file does contain "Ch6")
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    Name to assign these objects:Mk_segmentation
    Select the image type:Objects
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:2
    Metadata category:VWF
    Metadata category:Channelnb

GaussianFilter:[module_num:5|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
    Select the input image:KUO
    Name the output image:GaussianFilterKUO
    Sigma:3

GaussianFilter:[module_num:6|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
    Select the input image:Autofluo
    Name the output image:GaussianFilterautofluo
    Sigma:3

GaussianFilter:[module_num:7|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
    Select the input image:GFP
    Name the output image:GaussianFilterGFP
    Sigma:2

HistogramEqualization:[module_num:8|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notes:['256 bin size']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enabled:False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
    Select the input image:GaussianFilterGFP
    Name the output image:HistogramEqualizationGFP
    Bins:200
    Mask:Leave blank
    Local:Yes
    Tile Size:50
    Clip limit:0.01
    Is you image 3D?:Yes
    Do framewise calculation?:Yes
    Tile Size (Z):5

RunCellpose:[module_num:9|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notes:['Traceback (most recent call last):', '  File "/opt/anaconda3/envs/CellProfiler_plugins2/lib/python3.8/site-packages/cellprofiler/gui/pipelinecontroller.py", line 3464, in on_debug_continue', '    wants_continue, wants_skip = dlg.Update(index, message)', 'wx._core.wxAssertionError: C++ assertion "value <= m_maximum" failed at /Users/robind/projects/bb2/dist-osx-py38/build/ext/wxWidgets/src/generic/progdlgg.cpp(411) in Update(): invalid progress value']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enabled:False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
    Select the input image:HistogramEqualizationGFP
    Expected object diameter:40
    Detection mode:cyto
    Name the output object:RunCellposeMK
    Use GPU:No
    Use averaging:Yes
    Supply nuclei image as well?:No
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    Save probability image?:No
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    Location of the pre-trained model file:Elsewhere...|
    Pre-trained model file name:cyto_0
    Flow threshold:0.6
    Cell probability threshold:0.0
    GPU memory share for each worker:0.1
    Stitch Threshold:0.0
    Use 3D:Yes
    Minimum size:30
    Use Omnipose for mask reconstruction:No
    Invert images:No

ImageMath:[module_num:10|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notes:['raise power of results by 0.5', '', '1.2']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
    Operation:Subtract
    Raise the power of the result by:1
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMathKUOautofluo
    Image or measurement?:Image
    Select the first image:GaussianFilterKUO
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:GaussianFilterautofluo
    Multiply the second image by:1.3
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
Threshold:[module_num:11|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notes:['smoothing scale 2, correction factor 1.4 ', 'robust background sd 41, 1.3 correction', 'Otsu 3 classes, 0.8 correction', 'trying Otsu two classes 2.3']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
    Select the input image:ImageAfterMathKUOautofluo
    Name the output image:ThresholdedKUO
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1
    Threshold correction factor:1.3
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
RemoveHoles:[module_num:12|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enabled:False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
    Select the input image:ThresholdedKUO
    Name the output image:RemoveHolesKUO
    Size of holes to fill:20

Threshold:[module_num:13|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
    Select the input image:GaussianFilterGFP
    Name the output image:ThresholdGFP
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.03,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
ImageMath:[module_num:14|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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMathDP
    Image or measurement?:Image
    Select the first image:ThresholdedKUO
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:ThresholdGFP
    Multiply the second image by:1.0
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
Watershed:[module_num:15|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enabled:False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
    Select the input image:RemoveHolesKUO
    Name the output object:Watershed
    Use advanced settings?:No
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:1
    Compactness:0.0
    Footprint:10
    Downsample:2
    Separate watershed labels:No
    Declump method:Shape
    Reference Image:None
    Segmentation distance transform smoothing factor:1.0
    Minimum distance between seeds:1
    Minimum absolute internal distance:0.0
    Pixels from border to exclude:0
    Maximum number of seeds:-1
    Structuring element for seed dilation:Ball,1

Threshold:[module_num:16|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enabled:False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
    Select the input image:Autofluo
    Name the output image:ThresholdImage
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:10
    Threshold correction factor:0.2
    Lower and upper bounds on threshold:0.0,0.1
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    Log transform before thresholding?:No
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
ErodeImage:[module_num:17|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enabled:False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
    Select the input image:ThresholdImage
    Name the output image:ErodeImage
    Structuring element:disk,15

MaskImage:[module_num:18|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enabled:False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
    Select the input image:ImageAfterMathKUOautofluo
    Name the output image:MaskedImage
    Use objects or an image as a mask?:Image
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    Select image for mask:ErodeImage
    Invert the mask?:Yes

MeasureObjectSizeShape:[module_num:19|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enabled:False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
    Select object sets to measure:Watershed
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:20|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notes:['600', '', 'was 180']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enabled:False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
    Select the objects to filter:Watershed
    Name the output objects:FilterObjectsKUO
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_Volume
    Filter using a minimum measurement value?:Yes
    Minimum value:250
    Filter using a maximum measurement value?:No
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
MeasureObjectIntensity:[module_num:21|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
    Select images to measure:ImageAfterMathDP
    Select objects to measure:KuO_segmentation

FilterObjects:[module_num:22|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
    Select the objects to filter:KuO_segmentation
    Name the output objects:FilterObjectsDP
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:Yes
    Name the objects removed by the filter:RemovedObjectsSP
    Select the measurement to filter by:Intensity_MeanIntensity_ImageAfterMathDP
    Filter using a minimum measurement value?:Yes
    Minimum value:0.5
    Filter using a maximum measurement value?:No
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
RelateObjects:[module_num:23|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
    Parent objects:track
    Child objects:FilterObjectsDP
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:24|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
    Parent objects:track
    Child objects:RemovedObjectsSP
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
ImageMath:[module_num:25|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
    Operation:None
    Raise the power of the result by:0.8
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMathAF647
    Image or measurement?:Image
    Select the first image:AF647
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
GaussianFilter:[module_num:26|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
    Select the input image:ImageAfterMathAF647
    Name the output image:GaussianFilterAF647
    Sigma:2

Threshold:[module_num:27|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notes:['0.027 threshold bound']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
    Select the input image:GaussianFilterAF647
    Name the output image:ThresholdAF647
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:2
    Lower and upper bounds on threshold:0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
RemoveHoles:[module_num:28|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notes:['20']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
    Select the input image:ThresholdAF647
    Name the output image:RemoveHolesAF647
    Size of holes to fill:145

ConvertImageToObjects:[module_num:29|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
    Select the input image:RemoveHolesAF647
    Name the output object:ConvertImageToObjectsAF647
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

Threshold:[module_num:30|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notes:['9 sd, 1.3 captures bright MK']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enabled:False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
    Select the input image:HistogramEqualizationGFP
    Name the output image:ThresholdMKHE
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Size of adaptive window:50
    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:6
    Thresholding method:Robust Background

Watershed:[module_num:31|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enabled:False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
    Select the input image:ThresholdMKHE
    Name the output object:WatershedMK
    Use advanced settings?:No
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:1
    Compactness:0.0
    Footprint:20
    Downsample:2
    Separate watershed labels:No
    Declump method:Shape
    Reference Image:None
    Segmentation distance transform smoothing factor:1.0
    Minimum distance between seeds:1
    Minimum absolute internal distance:0.0
    Pixels from border to exclude:0
    Maximum number of seeds:-1
    Structuring element for seed dilation:Disk,1

OverlayOutlines:[module_num:32|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:HistogramEqualizationGFP
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:Red
    Select objects to display:WatershedMK

MeasureObjectSizeShape:[module_num:33|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
    Select object sets to measure:ConvertImageToObjectsAF647, Mk_segmentation
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:34|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notes:['MK based on size']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
    Select the objects to filter:Mk_segmentation
    Name the output objects:FilterObjectsMK
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_Volume
    Filter using a minimum measurement value?:Yes
    Minimum value:1500
    Filter using a maximum measurement value?:No
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
MeasureObjectIntensity:[module_num:35|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
    Select images to measure:AF647, Autofluo, GFP, KUO, RemoveHolesAF647
    Select objects to measure:ConvertImageToObjectsAF647, FilterObjectsDP, Mk_segmentation, RemovedObjectsSP

FilterObjects:[module_num:36|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notes:['Platelets that are small and in the vessels']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
    Select the objects to filter:Mk_segmentation
    Name the output objects:FilterObjects_plt
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:Intensity_MaxIntensity_RemoveHolesAF647
    Filter using a minimum measurement value?:Yes
    Minimum value:0.5
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:AreaShape_Volume
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:60

FilterObjects:[module_num:37|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notes:['Progenitors that are smaller than MK but bigger than platelets']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
    Select the objects to filter:Mk_segmentation
    Name the output objects:FilterObjects_progenitors
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_Volume
    Filter using a minimum measurement value?:Yes
    Minimum value:50
    Filter using a maximum measurement value?:Yes
    Maximum value:1500

MeasureObjectNeighbors:[module_num:38|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
    Select objects to measure:FilterObjectsDP
    Select neighboring objects to measure:FilterObjectsMK
    Method to determine neighbors:Within a specified distance
    Neighbor distance:30
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:39|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
    Select objects to measure:FilterObjectsDP
    Select neighboring objects to measure:FilterObjects_progenitors
    Method to determine neighbors:Within a specified distance
    Neighbor distance:30
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:40|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
    Select objects to measure:FilterObjectsDP
    Select neighboring objects to measure:FilterObjects_plt
    Method to determine neighbors:Within a specified distance
    Neighbor distance:30
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:41|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
    Select objects to measure:RemovedObjectsSP
    Select neighboring objects to measure:FilterObjectsMK
    Method to determine neighbors:Within a specified distance
    Neighbor distance:30
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:42|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
    Select objects to measure:RemovedObjectsSP
    Select neighboring objects to measure:FilterObjects_progenitors
    Method to determine neighbors:Within a specified distance
    Neighbor distance:30
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:43|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
    Select objects to measure:RemovedObjectsSP
    Select neighboring objects to measure:FilterObjects_plt
    Method to determine neighbors:Within a specified distance
    Neighbor distance:30
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:44|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
    Select objects to measure:FilterObjectsDP
    Select neighboring objects to measure:ConvertImageToObjectsAF647
    Method to determine neighbors:Within a specified distance
    Neighbor distance:30
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:45|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
    Select objects to measure:RemovedObjectsSP
    Select neighboring objects to measure:ConvertImageToObjectsAF647
    Method to determine neighbors:Within a specified distance
    Neighbor distance:30
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
ExportToSpreadsheet:[module_num:46|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Downloads/CellProfiler/VWF_043_movies
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:FilterObjectsDP|Parent_track,FilterObjectsDP|Number_Object_Number,ConvertImageToObjectsAF647|Intensity_MADIntensity_AF647,ConvertImageToObjectsAF647|Intensity_MADIntensity_GFP,ConvertImageToObjectsAF647|Intensity_MADIntensity_Autofluo,ConvertImageToObjectsAF647|Intensity_MADIntensity_KUO,ConvertImageToObjectsAF647|Intensity_MinIntensityEdge_KUO,ConvertImageToObjectsAF647|Intensity_MinIntensityEdge_GFP,ConvertImageToObjectsAF647|Intensity_MinIntensityEdge_AF647,ConvertImageToObjectsAF647|Intensity_MinIntensityEdge_Autofluo,ConvertImageToObjectsAF647|Intensity_MinIntensity_Autofluo,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:VWF_043_
    Overwrite existing files without warning?:No
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
ConvertObjectsToImage:[module_num:47|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enabled:False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
    Select the input objects:FilterObjectsDP
    Name the output image:CellImageDP
    Select the color format:Grayscale
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
ConvertObjectsToImage:[module_num:48|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enabled:False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
    Select the input objects:RemovedObjectsSP
    Name the output image:CellImageSP
    Select the color format:Grayscale
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
SaveImages:[module_num:49|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notes:['']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enabled:False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
    Select the type of image to save:Image
    Select the image to save:CellImageDP
    Select method for constructing file names:From image filename
    Select image name for file prefix:KUO
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:D
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Downloads/CellProfiler/corrected_movies_movie_example/CP_output
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveCroppedObjects:[module_num:50|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
    Objects:FilterObjectsDP
    Directory:Default Input Folder sub-folder|Downloads/CellProfiler/VWF_043_movies/cropped_KuO_DP
    Saved file format:8-bit tiff
    Do you want to save cropped images or object masks?:Images
    Image:KUO

SaveCroppedObjects:[module_num:51|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
    Objects:RemovedObjectsSP
    Directory:Default Input Folder sub-folder|Downloads/CellProfiler/VWF_043_movies/cropped_KuO_SP
    Saved file format:8-bit tiff
    Do you want to save cropped images or object masks?:Images
    Image:KUO

SaveImages:[module_num:52|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:CellImageSP
    Select method for constructing file names:From image filename
    Select image name for file prefix:KUO
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:SP
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Downloads/CellProfiler/corrected_movies_movie_example/CP_output
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
