CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:500
GitHash:
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.', '', 'corrected_movies_2_1movieexampls/movies_apply_2_splitchannels', '', 'VWF_048/split_timepoint_test', '', 'VWF-043/movie-apply-split-timeframes']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
    Filter images?:Images only
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    Extract image planes:Yes
    Split channels:No
    Split z-planes:No
    Split timepoints:No

Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '^(?P<VWF>.*)_Ch(?P<Channelnb>.*)_xyzCorrected.tif']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<VWF>.*)_Ch(?P<Channelnb>.*)_xyzCorrected.tif - T=(?P<Timepoint>.*).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '', '0.5524285', '1.92']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:Yes
    Relative pixel spacing in X:1
    Relative pixel spacing in Y:1
    Relative pixel spacing in Z:1
    Select the rule criteria:and (file does contain "Ch1")
    Name to assign these images:GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Ch2")
    Name to assign these images:AF647
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Ch3")
    Name to assign these images:KUO
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Ch4")
    Name to assign these images:Autofluo
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:2
    Metadata category:VWF
    Metadata category:Channelnb

GaussianFilter:[module_num:5|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
    Select the input image:KUO
    Name the output image:GaussianFilterKUO
    Sigma:3

GaussianFilter:[module_num:6|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
    Select the input image:Autofluo
    Name the output image:GaussianFilterautofluo
    Sigma:3

ImageMath:[module_num:7|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notes:['raise power of results by 0.5', '', '1.2']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
    Operation:Subtract
    Raise the power of the result by:1
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMathKUOautofluo
    Image or measurement?:Image
    Select the first image:GaussianFilterKUO
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:GaussianFilterautofluo
    Multiply the second image by:1.3
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
Threshold:[module_num:8|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notes:['smoothing scale 2, correction factor 1.4 ', 'robust background sd 41, 1.3 correction', 'Otsu 3 classes, 0.8 correction', 'trying Otsu two classes 2.3']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
    Select the input image:ImageAfterMathKUOautofluo
    Name the output image:ThresholdedKUO
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1
    Threshold correction factor:1.3
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
RemoveHoles:[module_num:9|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
    Select the input image:ThresholdedKUO
    Name the output image:RemoveHolesKUO
    Size of holes to fill:20

Watershed:[module_num:10|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
    Select the input image:RemoveHolesKUO
    Name the output object:Watershed
    Use advanced settings?:No
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:1
    Compactness:0.0
    Footprint:10
    Downsample:2
    Separate watershed labels:No
    Declump method:Shape
    Reference Image:None
    Segmentation distance transform smoothing factor:1.0
    Minimum distance between seeds:1
    Minimum absolute internal distance:0.0
    Pixels from border to exclude:0
    Maximum number of seeds:-1
    Structuring element for seed dilation:Ball,1

MeasureObjectSizeShape:[module_num:11|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
    Select object sets to measure:Watershed
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:12|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notes:['600', '', 'was 180']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
    Select the objects to filter:Watershed
    Name the output objects:FilterObjectsKUO
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_Volume
    Filter using a minimum measurement value?:Yes
    Minimum value:250
    Filter using a maximum measurement value?:No
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
MaskObjects:[module_num:13|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
    Select objects to be masked:FilterObjectsKUO
    Name the masked objects:MaskedNuclei
    Mask using a region defined by other objects or by binary image?:Image
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    Select the masking image:Autofluo
    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

ConvertObjectsToImage:[module_num:14|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
    Select the input objects:FilterObjectsKUO
    Name the output image:CellImageKuO
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:15|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:CellImageKuO
    Select method for constructing file names:From image filename
    Select image name for file prefix:KUO
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Downloads/CellProfiler/movie_pipeline_test/7_KuO_output_timepoint_split
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
