CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:27
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.', '', 'corrected_movies_2_1movieexampls/movies_apply_2_splitchannels + trackmate_output_split']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '^(?P<VWF>.*)_Ch(?P<Channelnb>.*)_xyzCorrected.tif']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
    Extract metadata?:Yes
    Metadata data type:Choose for each
    Metadata types:{"Channelnb": "integer", "FileLocation": "text", "Format1": "text", "Format2": "text", "Frame": "text", "Series": "text", "Timepoint": "integer", "VWF": "text"}
    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<VWF>.*)_Ch(?P<Channelnb>.*)_xyzCorrected.ti(?P<Format1>.*) - T=(?P<Timepoint>.*).ti(?P<Format2>.*)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '', '0.5524285', '1.92']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
    Assign a name to:Images matching rules
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    Match metadata:[{'GFP': 'Timepoint', 'AF647': 'Timepoint', 'MK_Ilastik_proba': 'Timepoint'}, {'GFP': 'VWF', 'AF647': 'VWF', 'MK_Ilastik_proba': 'VWF'}]
    Image set matching method:Metadata
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    Assignments count:3
    Single images count:0
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    Process as 3D?:Yes
    Relative pixel spacing in X:1
    Relative pixel spacing in Y:1
    Relative pixel spacing in Z:1
    Select the rule criteria:and (file does contain "Ch1")
    Name to assign these images:GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Ch2")
    Name to assign these images:AF647
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Ch5")
    Name to assign these images:MK_Ilastik_proba
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:VWF

GaussianFilter:[module_num:5|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
    Select the input image:GFP
    Name the output image:GaussianFilterGFP
    Sigma:2

RescaleIntensity:[module_num:6|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
    Select the input image:GFP
    Name the output image:RescaleIntensityGFP
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:7|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
    Select the input image:AF647
    Name the output image:RescaleIntensityAF647
    Rescaling method:Stretch each image to use the full intensity range
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
ImageMath:[module_num:8|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
    Operation:None
    Raise the power of the result by:0.8
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMathAF647
    Image or measurement?:Image
    Select the first image:AF647
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
GaussianFilter:[module_num:9|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
    Select the input image:ImageAfterMathAF647
    Name the output image:GaussianFilterAF647
    Sigma:2

Threshold:[module_num:10|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notes:['0.027 threshold bound']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
    Select the input image:GaussianFilterAF647
    Name the output image:ThresholdAF647
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:2
    Lower and upper bounds on threshold:0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
RemoveHoles:[module_num:11|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notes:['20']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
    Select the input image:ThresholdAF647
    Name the output image:RemoveHolesAF647
    Size of holes to fill:145

ConvertImageToObjects:[module_num:12|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
    Select the input image:RemoveHolesAF647
    Name the output object:ConvertImageToObjectsAF647
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

OverlayOutlines:[module_num:13|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaleIntensityAF647
    Name the output image:OrigOverlayAF647
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:Red
    Select objects to display:ConvertImageToObjectsAF647

GaussianFilter:[module_num:14|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enabled:False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
    Select the input image:InvertMk_segmentation
    Name the output image:GaussianFilterIlastik
    Sigma:1

MeasureImageIntensity:[module_num:15|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
    Select images to measure:MK_Ilastik_proba
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:No
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
Threshold:[module_num:16|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
    Select the input image:MK_Ilastik_proba
    Name the output image:ThresholdIlastik
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
ConvertImageToObjects:[module_num:17|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
    Select the input image:MK_Ilastik_proba
    Name the output object:Mk_segmentation
    Convert to boolean image:No
    Preserve original labels:Yes
    Background label:-1
    Connectivity:0.0001

MeasureObjectSizeShape:[module_num:18|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
    Select object sets to measure:ConvertImageToObjectsAF647, Mk_segmentation
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:19|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notes:['MK based on size', 'was 1500']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
    Select the objects to filter:Mk_segmentation
    Name the output objects:FilterObjectsMK
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_Volume
    Filter using a minimum measurement value?:Yes
    Minimum value:1500
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:20|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
    Select the objects to filter:ConvertImageToObjectsAF647
    Name the output objects:FilterObjectsAF647
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_Volume
    Filter using a minimum measurement value?:Yes
    Minimum value:700
    Filter using a maximum measurement value?:No
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
MeasureObjectIntensity:[module_num:21|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
    Select images to measure:AF647, GFP, RemoveHolesAF647
    Select objects to measure:ConvertImageToObjectsAF647, Mk_segmentation

FilterObjects:[module_num:22|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notes:['Platelets that are small and in the vessels']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
    Select the objects to filter:Mk_segmentation
    Name the output objects:FilterObjects_plt
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_MaxIntensity_RemoveHolesAF647
    Filter using a minimum measurement value?:Yes
    Minimum value:0.5
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:AreaShape_Volume
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:60
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
FilterObjects:[module_num:23|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notes:['Progenitors that are smaller than MK but bigger than platelets']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
    Select the objects to filter:Mk_segmentation
    Name the output objects:FilterObjects_progenitors
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_Volume
    Filter using a minimum measurement value?:Yes
    Minimum value:50
    Filter using a maximum measurement value?:Yes
    Maximum value:1500
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
OverlayOutlines:[module_num:24|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaleIntensityGFP
    Name the output image:OrigOverlayprog
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#17D9EC
    Select objects to display:FilterObjects_progenitors
    Select outline color:Green
    Select objects to display:FilterObjectsMK
    Select outline color:#FF0021
    Select objects to display:FilterObjects_plt

ExportToSpreadsheet:[module_num:25|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|Downloads/CellProfiler/movie_pipeline_test
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:ConvertImageToObjectsAF647|Intensity_MaxIntensity_RemoveHolesAF647,ConvertImageToObjectsAF647|Intensity_MaxIntensity_GFP,ConvertImageToObjectsAF647|Intensity_MaxIntensity_AF647,ConvertImageToObjectsAF647|Intensity_MaxIntensityEdge_AF647,ConvertImageToObjectsAF647|Intensity_MaxIntensityEdge_GFP,ConvertImageToObjectsAF647|Intensity_MaxIntensityEdge_RemoveHolesAF647,ConvertImageToObjectsAF647|Intensity_StdIntensity_GFP,ConvertImageToObjectsAF647|Intensity_StdIntensity_AF647,ConvertImageToObjectsAF647|Intensity_StdIntensity_RemoveHolesAF647,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MK_
    Overwrite existing files without warning?:No
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
SaveImages:[module_num:26|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlayprog
    Select method for constructing file names:From image filename
    Select image name for file prefix:GFP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:Prog
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Downloads/CellProfiler/movie_pipeline_test/15_MK_overlay/segmentation_QC
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:27|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
    Select the type of image to save:Image
    Select the image to save:RemoveHolesAF647
    Select method for constructing file names:From image filename
    Select image name for file prefix:AF647
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:vesse
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Downloads/CellProfiler/movie_pipeline_test/15_MK_overlay/segmentation_QC
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
