CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:26
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '', '^(?P<VWF>.*)_Ch(?P<Channelnb>.*).tif', '', 'DAPI GFP AF647 KuO autofluo']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
    Extract metadata?:Yes
    Metadata data type:Choose for each
    Metadata types:{"Channelnb": "integer", "FileLocation": "text", "Frame": "text", "Series": "text", "VWF": "text"}
    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<VWF>.*)_Ch(?P<Channelnb>.*).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{'AUTOFLUO': 'VWF', 'CD150': 'VWF', 'GFP': 'VWF', 'KUO': 'VWF', 'LepR': 'VWF'}]
    Image set matching method:Metadata
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    Assignments count:5
    Single images count:0
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    Process as 3D?:Yes
    Relative pixel spacing in X:1.0
    Relative pixel spacing in Y:1.0
    Relative pixel spacing in Z:1.0
    Select the rule criteria:and (metadata does Channelnb "1")
    Name to assign these images:LepR
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channelnb "2")
    Name to assign these images:GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channelnb "3")
    Name to assign these images:CD150
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channelnb "4")
    Name to assign these images:KUO
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channelnb "5")
    Name to assign these images:AUTOFLUO
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:VWF

GaussianFilter:[module_num:5|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enabled:False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
    Select the input image:LepR
    Name the output image:GaussianFilterLepR
    Sigma:2

ImageMath:[module_num:6|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMathLepR
    Image or measurement?:Image
    Select the first image:LepR
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:AUTOFLUO
    Multiply the second image by:1.0
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
HistogramEqualization:[module_num:7|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
    Select the input image:ImageAfterMathLepR
    Name the output image:HistogramEqualizationLepR
    Bins:256
    Mask:Leave blank
    Local:Yes
    Tile Size:50
    Clip limit:0.01
    Is you image 3D?:Yes
    Do framewise calculation?:No
    Tile Size (Z):5

Threshold:[module_num:8|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
    Select the input image:HistogramEqualizationLepR
    Name the output image:ThresholdLepR
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.2
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
RemoveHoles:[module_num:9|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enabled:False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
    Select the input image:ThresholdCKIT
    Name the output image:RemoveHoles
    Size of holes to fill:5

Watershed:[module_num:10|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enabled:False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
    Select the input image:ThresholdCKIT
    Name the output object:WatershedCKIT
    Use advanced settings?:Yes
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:1
    Compactness:0.0
    Footprint:10
    Downsample:1
    Separate watershed labels:No
    Declump method:Intensity
    Reference Image:GaussianFilterCKIT
    Segmentation distance transform smoothing factor:0
    Minimum distance between seeds:10
    Minimum absolute internal distance:0.0
    Pixels from border to exclude:0
    Maximum number of seeds:-1
    Structuring element for seed dilation:Cube,1

RescaleIntensity:[module_num:11|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enabled:False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
    Select the input image:GaussianFilterCKIT
    Name the output image:RescaleIntensityCKIT
    Rescaling method:Stretch each image to use the full intensity range
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
OverlayOutlines:[module_num:12|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaleIntensityCKIT
    Name the output image:OrigOverlayCKIT
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#39FFFE
    Select objects to display:WatershedCKIT

SaveImages:[module_num:13|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:OrigOverlayCKIT
    Select method for constructing file names:From image filename
    Select image name for file prefix:CKIT
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:CKIT
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

MeasureObjectSizeShape:[module_num:14|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enabled:False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
    Select object sets to measure:WatershedCKIT
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

FilterObjects:[module_num:15|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enabled:False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
    Select the objects to filter:WatershedCKIT
    Name the output objects:FilterObjectsCKIT
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_Volume
    Filter using a minimum measurement value?:Yes
    Minimum value:50
    Filter using a maximum measurement value?:No
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
GaussianFilter:[module_num:16|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enabled:False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
    Select the input image:CD150
    Name the output image:GaussianFilterCD150
    Sigma:1

Threshold:[module_num:17|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enabled:False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
    Select the input image:GaussianFilterCD150
    Name the output image:ThresholdCD150
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
    Size of adaptive window:15
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    Thresholding method:Otsu

Watershed:[module_num:18|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enabled:False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
    Select the input image:ThresholdCD150
    Name the output object:WatershedCD150
    Use advanced settings?:Yes
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:1
    Compactness:0.0
    Footprint:8
    Downsample:1
    Separate watershed labels:No
    Declump method:Shape
    Reference Image:None
    Segmentation distance transform smoothing factor:1.0
    Minimum distance between seeds:10
    Minimum absolute internal distance:0.0
    Pixels from border to exclude:0
    Maximum number of seeds:-1
    Structuring element for seed dilation:Cube,1

RescaleIntensity:[module_num:19|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enabled:False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
    Select the input image:GaussianFilterCD150
    Name the output image:RescaleIntensityCD150
    Rescaling method:Stretch each image to use the full intensity range
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
ImageMath:[module_num:20|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enabled:False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
    Operation:None
    Raise the power of the result by:0.7
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMathCD150
    Image or measurement?:Image
    Select the first image:RescaleIntensityCD150
    Multiply the first image by:1
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    Image or measurement?:Image
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
OverlayOutlines:[module_num:21|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ImageAfterMathCD150
    Name the output image:OrigOverlayCD150
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:Red
    Select objects to display:WatershedCD150

SaveImages:[module_num:22|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:OrigOverlayCD150
    Select method for constructing file names:From image filename
    Select image name for file prefix:CD150
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:CD150
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

GaussianFilter:[module_num:23|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
    Select the input image:KUO
    Name the output image:GaussianFilterKUO
    Sigma:2

GaussianFilter:[module_num:24|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
    Select the input image:AUTOFLUO
    Name the output image:GaussianFilterAUTOFLUO
    Sigma:2

ImageMath:[module_num:25|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
    Select the first image:GaussianFilterKUO
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:GaussianFilterAUTOFLUO
    Multiply the second image by:2.5
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
Threshold:[module_num:26|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
    Name the output image:Threshold
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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