CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:23
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<VWF>.*)_Ch(?P<Channelnb>.*).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{'AF647': 'VWF', 'Autofluo': 'VWF', 'CKIT': 'VWF', 'GFP': 'VWF', 'KUO': 'VWF'}]
    Image set matching method:Metadata
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    Assignments count:5
    Single images count:0
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    Process as 3D?:Yes
    Relative pixel spacing in X:1.0
    Relative pixel spacing in Y:1.0
    Relative pixel spacing in Z:1.0
    Select the rule criteria:and (metadata does Channelnb "1")
    Name to assign these images:CKIT
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channelnb "2")
    Name to assign these images:GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channelnb "3")
    Name to assign these images:AF647
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channelnb "4")
    Name to assign these images:KUO
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channelnb "5")
    Name to assign these images:Autofluo
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:VWF

GaussianFilter:[module_num:5|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
    Select the input image:KUO
    Name the output image:GaussianFilterKUO
    Sigma:3

GaussianFilter:[module_num:6|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
    Select the input image:Autofluo
    Name the output image:GaussianFilterAutofluo
    Sigma:3

GaussianFilter:[module_num:7|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
    Select the input image:GFP
    Name the output image:GaussianFilterGFP
    Sigma:2

RescaleIntensity:[module_num:8|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
    Select the input image:GFP
    Name the output image:RescaleIntensityGFP
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:9|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
    Select the input image:AF647
    Name the output image:RescaleIntensityAF647
    Rescaling method:Stretch each image to use the full intensity range
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
ImageMath:[module_num:10|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMathKUOAutofluo
    Image or measurement?:Image
    Select the first image:GaussianFilterKUO
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:GaussianFilterAutofluo
    Multiply the second image by:1.6
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
Threshold:[module_num:11|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
    Select the input image:ImageAfterMathKUOAutofluo
    Name the output image:ThresholdKUO
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1
    Threshold correction factor:1.3
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
Threshold:[module_num:12|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enabled:False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
    Select the input image:Autofluo
    Name the output image:ThresholdAutofluo
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1
    Threshold correction factor:1.3
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:4
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
RemoveHoles:[module_num:13|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enabled:False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
    Name the output image:RemoveHoles
    Size of holes to fill:1.0

Threshold:[module_num:14|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enabled:False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
    Select the input image:GaussianFilterGFP
    Name the output image:ThresholdGFP
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.003,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
ImageMath:[module_num:15|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enabled:False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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
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    Multiply the first image by:1.0
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    Image or measurement?:Image
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    Multiply the second image by:1.0
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
Watershed:[module_num:16|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
    Select the input image:ThresholdKUO
    Name the output object:WatershedKUO
    Use advanced settings?:No
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:1
    Compactness:0.0
    Footprint:10
    Downsample:2
    Separate watershed labels:No
    Declump method:Shape
    Reference Image:None
    Segmentation distance transform smoothing factor:1.0
    Minimum distance between seeds:1
    Minimum absolute internal distance:0.0
    Pixels from border to exclude:0
    Maximum number of seeds:-1
    Structuring element for seed dilation:Disk,1

MeasureObjectSizeShape:[module_num:17|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
    Select object sets to measure:WatershedKUO
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:18|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enabled:False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
    Select images to measure:ThresholdAutofluo
    Select objects to measure:WatershedKUO

FilterObjects:[module_num:19|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
    Select the objects to filter:WatershedKUO
    Name the output objects:FilterObjectsKUO
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_Volume
    Filter using a minimum measurement value?:Yes
    Minimum value:2000
    Filter using a maximum measurement value?:Yes
    Maximum value:4000

ExportToSpreadsheet:[module_num:20|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enabled:False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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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
SaveCroppedObjects:[module_num:21|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
    Objects:FilterObjectsKUO
    Directory:Default Output Folder
    Saved file format:8-bit tiff
    Do you want to save cropped images or object masks?:Images
    Image:ImageAfterMathKUOAutofluo

OverlayOutlines:[module_num:22|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ImageAfterMathKUOAutofluo
    Name the output image:OrigOverlayKUO
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:Red
    Select objects to display:FilterObjectsKUO

SaveImages:[module_num:23|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:OrigOverlayKUO
    Select method for constructing file names:From image filename
    Select image name for file prefix:KUO
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
