CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:57
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.', '', 'corrected_movies_2_1movieexampls/movies_apply_2_splitchannels', '', 'VWF_048/split_timepoint_test', '', 'VWF-043/movie-apply-split-timeframes']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '^(?P<VWF>.*)_Ch(?P<Channelnb>.*)_xyzCorrected.tif']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
    Extract metadata?:Yes
    Metadata data type:Choose for each
    Metadata types:{"Channelnb": "text", "FileLocation": "text", "Filename": "text", "Frame": "text", "Series": "text", "Timepoint": "integer"}
    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Filename>.*)_Ch(?P<Channelnb>.*).tif - T=(?P<Timepoint>.*).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '', 'Groups must be correct otherwise this module won’t work', '']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
    Assign a name to:Images matching rules
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    Match metadata:[{'APC': 'Filename', 'GFP': 'Filename', 'Tom': 'Filename'}, {'APC': 'Timepoint', 'GFP': 'Timepoint', 'Tom': 'Timepoint'}]
    Image set matching method:Metadata
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    Assignments count:3
    Single images count:0
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    Process as 3D?:Yes
    Relative pixel spacing in X:1
    Relative pixel spacing in Y:1
    Relative pixel spacing in Z:1
    Select the rule criteria:and (metadata does Channelnb "1")
    Name to assign these images:GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channelnb "2")
    Name to assign these images:Tom
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channelnb "3")
    Name to assign these images:APC
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Filename

GaussianFilter:[module_num:5|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notes:['was 3']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
    Select the input image:GFP
    Name the output image:GaussianFilterGFP
    Sigma:1

GaussianFilter:[module_num:6|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
    Select the input image:Tom
    Name the output image:GaussianFilterTom
    Sigma:1

HistogramEqualization:[module_num:7|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notes:['256 bin size']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enabled:False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
    Select the input image:APC
    Name the output image:HistogramEqualizationAPC
    Bins:200
    Mask:Leave blank
    Local:Yes
    Tile Size:50
    Clip limit:0.01
    Is you image 3D?:Yes
    Do framewise calculation?:Yes
    Tile Size (Z):5

RescaleIntensity:[module_num:8|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enabled:False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
    Select the input image:Tom
    Name the output image:RescaleIntensityTom
    Rescaling method:Stretch each image to use the full intensity range
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
EnhanceOrSuppressFeatures:[module_num:9|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enabled:False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
    Select the input image:GaussianFilterTom
    Name the output image:EnhanceOrSuppressFeatures
    Select the operation:Enhance
    Feature size:12
    Feature type:Speckles
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    Speed and accuracy:Fast
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
GaussianFilter:[module_num:10|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enabled:False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
    Select the input image:HistogramEqualizationAPC
    Name the output image:GaussianFilterAPC
    Sigma:2

ImageMath:[module_num:11|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notes:['raise power of results by 0.5', '', '1.2', 'was 1.3']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
    Operation:Subtract
    Raise the power of the result by:1
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMathTom
    Image or measurement?:Image
    Select the first image:GaussianFilterTom
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:GaussianFilterGFP
    Multiply the second image by:1.3
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
HistogramEqualization:[module_num:12|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
    Select the input image:ImageAfterMathTom
    Name the output image:HistogramEqualizationTom
    Bins:200
    Mask:Leave blank
    Local:Yes
    Tile Size:50
    Clip limit:0.01
    Is you image 3D?:Yes
    Do framewise calculation?:Yes
    Tile Size (Z):5

ImageMath:[module_num:13|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enabled:False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
    Operation:Subtract
    Raise the power of the result by:1
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMathGFP
    Image or measurement?:Image
    Select the first image:GaussianFilterGFP
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:GaussianFilterAPC
    Multiply the second image by:0.1
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
Threshold:[module_num:14|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notes:['Global Robust Background 9sd, 1,1,5 ', '', 'Latest: Otsu 3 classes adaptive, background, 1, 1, size of adaptive window of 5', '', 'smoothing scale 2, correction factor 1.4 ', 'robust background sd 41, 1.3 correction', 'Otsu 3 classes, 0.8 correction', 'trying Otsu two classes 2.3', '', 'was 1.3']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
    Select the input image:HistogramEqualizationTom
    Name the output image:ThresholdedTom
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0
    Threshold correction factor:1.4
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:5
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    Thresholding method:Otsu

RemoveHoles:[module_num:15|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enabled:False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
    Select the input image:ThresholdedTom
    Name the output image:RemoveHolesTom
    Size of holes to fill:20

Threshold:[module_num:16|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enabled:False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
    Select the input image:ImageAfterMathTom
    Name the output image:ThresholdedTom2
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0
    Threshold correction factor:1.4
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:5
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    Thresholding method:Otsu

ImageMath:[module_num:17|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
    Operation:Subtract
    Raise the power of the result by:0.5
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMathsubTom
    Image or measurement?:Image
    Select the first image:GaussianFilterGFP
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:HistogramEqualizationTom
    Multiply the second image by:1
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
Threshold:[module_num:18|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
    Select the input image:ImageAfterMathsubTom
    Name the output image:ThresholdedsubTom
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:1.5
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
ImageMath:[module_num:19|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enabled:False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
    Operation:Invert
    Raise the power of the result by:1
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMathInvertTom
    Image or measurement?:Image
    Select the first image:ImageAfterMathsubTom
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
EnhanceOrSuppressFeatures:[module_num:20|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enabled:False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
    Select the input image:ImageAfterMathInvertTom
    Name the output image:EnhanceOrSuppressFeatures
    Select the operation:Enhance
    Feature size:12
    Feature type:Speckles
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    Speed and accuracy:Fast
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
Watershed:[module_num:21|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
    Select the input image:ThresholdedsubTom
    Name the output object:WatershedTom
    Use advanced settings?:Yes
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:1
    Compactness:0.0
    Footprint:10
    Downsample:1
    Separate watershed labels:No
    Declump method:Shape
    Reference Image:ImageAfterMathTom
    Segmentation distance transform smoothing factor:0
    Minimum distance between seeds:4
    Minimum absolute internal distance:0.3
    Pixels from border to exclude:0
    Maximum number of seeds:-1
    Structuring element for seed dilation:ball,4

RemoveHoles:[module_num:22|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enabled:False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
    Select the input image:ThresholdedTom
    Name the output image:RemoveHolesTom
    Size of holes to fill:10

Watershed:[module_num:23|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enabled:False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
    Select the input image:ImageAfterMathInvertTom
    Name the output object:WatershedInvertTom
    Use advanced settings?:Yes
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:1
    Compactness:0.0
    Footprint:10
    Downsample:1
    Separate watershed labels:No
    Declump method:Shape
    Reference Image:ImageAfterMathTom
    Segmentation distance transform smoothing factor:0
    Minimum distance between seeds:4
    Minimum absolute internal distance:0.3
    Pixels from border to exclude:0
    Maximum number of seeds:-1
    Structuring element for seed dilation:ball,4

Watershed:[module_num:24|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enabled:False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
    Select the input image:ThresholdedGFP
    Name the output object:WatershedGFP
    Use advanced settings?:Yes
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:1
    Compactness:0.0
    Footprint:8
    Downsample:1
    Separate watershed labels:No
    Declump method:Intensity
    Reference Image:GFP
    Segmentation distance transform smoothing factor:0
    Minimum distance between seeds:2
    Minimum absolute internal distance:0.1
    Pixels from border to exclude:0
    Maximum number of seeds:-1
    Structuring element for seed dilation:Ball,1

MeasureObjectSizeShape:[module_num:25|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
    Select object sets to measure:WatershedTom
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

FilterObjects:[module_num:26|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notes:['600', '', 'was 180', '', '250']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
    Select the objects to filter:WatershedTom
    Name the output objects:FilterObjectsTom
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:5
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_Volume
    Filter using a minimum measurement value?:Yes
    Minimum value:300
    Filter using a maximum measurement value?:Yes
    Maximum value:3000
    Select the measurement to filter by:AreaShape_BoundingBoxMaximum_X
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:410
    Select the measurement to filter by:AreaShape_BoundingBoxMaximum_Y
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:410
    Select the measurement to filter by:AreaShape_BoundingBoxMinimum_X
    Filter using a minimum measurement value?:Yes
    Minimum value:10
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:AreaShape_BoundingBoxMinimum_Y
    Filter using a minimum measurement value?:Yes
    Minimum value:10
    Filter using a maximum measurement value?:No
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
ConvertObjectsToImage:[module_num:27|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
    Select the input objects:FilterObjectsTom
    Name the output image:CellImageTom
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:28|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:CellImageTom
    Select method for constructing file names:From image filename
    Select image name for file prefix:Tom
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Downloads/CellProfiler/Dina/7v3_7_AML_output_timepoint_split
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

Threshold:[module_num:29|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notes:['9 sd, 1.3 captures bright MK']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enabled:False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
    Select the input image:GaussianFilterAPC
    Name the output image:ThresholdAPC
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:1.1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
ConvertImageToObjects:[module_num:30|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enabled:False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
    Select the input image:ThresholdAPC
    Name the output object:ConvertImageToObjectsAPC
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

MeasureObjectSizeShape:[module_num:31|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enabled:False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
    Select object sets to measure:ConvertImageToObjectsAPC
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:32|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enabled:False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
    Select the objects to filter:ConvertImageToObjectsAPC
    Name the output objects:FilterObjectsAPC
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_Volume
    Filter using a minimum measurement value?:Yes
    Minimum value:1200
    Filter using a maximum measurement value?:No
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
MeasureObjectSizeShape:[module_num:33|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enabled:False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
    Select object sets to measure:FilterObjectsAPC
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

OverlayOutlines:[module_num:34|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:HistogramEqualizationAPC
    Name the output image:OrigOverlayAPC
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#00F1E5
    Select objects to display:FilterObjectsAPC

OverlayOutlines:[module_num:35|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Tom
    Name the output image:OrigOverlayTom
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#FF0003
    Select objects to display:FilterObjectsTom

SaveImages:[module_num:36|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:OrigOverlayTom
    Select method for constructing file names:From image filename
    Select image name for file prefix:Tom
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:Tom
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Downloads/CellProfiler/Dina
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:37|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:OrigOverlayAPC
    Select method for constructing file names:From image filename
    Select image name for file prefix:APC
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:APC
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Downloads/CellProfiler/Dina
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:38|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enabled:False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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Downloads/CellProfiler/Dina
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:WatershedTom|Location_Center_Z,WatershedTom|Location_Center_X,WatershedTom|Location_Center_Y,WatershedTom|Number_Object_Number,FilterObjectsAPC|AreaShape_EulerNumber,FilterObjectsAPC|AreaShape_Center_X,FilterObjectsAPC|AreaShape_Center_Y,FilterObjectsAPC|AreaShape_Center_Z,FilterObjectsAPC|AreaShape_BoundingBoxVolume,FilterObjectsAPC|AreaShape_BoundingBoxMinimum_Z,FilterObjectsAPC|AreaShape_BoundingBoxMinimum_Y,FilterObjectsAPC|AreaShape_BoundingBoxMinimum_X,FilterObjectsAPC|AreaShape_BoundingBoxMaximum_Y,FilterObjectsAPC|AreaShape_BoundingBoxMaximum_Z,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Expt1_
    Overwrite existing files without warning?:No
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
Threshold:[module_num:39|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enabled:False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
    Select the input image:GaussianFilterGFP
    Name the output image:ThresholdGFP
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.03,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
ImageMath:[module_num:40|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enabled:False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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMathDP
    Image or measurement?:Image
    Select the image:ThresholdedKUO
    Multiply the image by:1.0
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    Image or measurement?:Image
    Select the image:ThresholdGFP
    Multiply the image by:1.0
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
Threshold:[module_num:41|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enabled:False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
    Select the input image:Autofluo
    Name the output image:ThresholdImage
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:10
    Threshold correction factor:0.2
    Lower and upper bounds on threshold:0.0,0.1
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    Log transform before thresholding?:No
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
ErodeImage:[module_num:42|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enabled:False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
    Select the input image:ThresholdImage
    Name the output image:ErodeImage
    Structuring element:disk,15

MaskImage:[module_num:43|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enabled:False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
    Select the input image:ImageAfterMathKUOautofluo
    Name the output image:MaskedImage
    Use objects or an image as a mask?:Image
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    Select image for mask:ErodeImage
    Invert the mask?:Yes

MeasureObjectIntensity:[module_num:44|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enabled:False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
    Select images to measure:ImageAfterMathDP
    Select objects to measure:FilterObjectsKUO

ImageMath:[module_num:45|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enabled:False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
    Operation:None
    Raise the power of the result by:0.8
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMathAF647
    Image or measurement?:Image
    Select the image:AF647
    Multiply the image by:1.0
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    Image or measurement?:Image
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    Multiply the image by:1.0
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
GaussianFilter:[module_num:46|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enabled:False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
    Select the input image:ImageAfterMathAF647
    Name the output image:GaussianFilterAF647
    Sigma:2

Threshold:[module_num:47|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notes:['0.027 threshold bound']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enabled:False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
    Select the input image:GaussianFilterAF647
    Name the output image:ThresholdAF647
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:2
    Lower and upper bounds on threshold:0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
RemoveHoles:[module_num:48|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notes:['20']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enabled:False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
    Select the input image:ThresholdAF647
    Name the output image:RemoveHolesAF647
    Size of holes to fill:145

Watershed:[module_num:49|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enabled:False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
    Select the input image:ThresholdMKHE
    Name the output object:WatershedMK
    Use advanced settings?:No
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:1
    Compactness:0.0
    Footprint:20
    Downsample:2
    Separate watershed labels:No
    Declump method:Shape
    Reference Image:None
    Segmentation distance transform smoothing factor:1.0
    Minimum distance between seeds:1
    Minimum absolute internal distance:0.0
    Pixels from border to exclude:0
    Maximum number of seeds:-1
    Structuring element for seed dilation:Disk,1

FilterObjects:[module_num:50|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enabled:False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
    Select the objects to filter:WatershedMK
    Name the output objects:FilterObjectsMK
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_Volume
    Filter using a minimum measurement value?:Yes
    Minimum value:1500
    Filter using a maximum measurement value?:No
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
MeasureObjectIntensity:[module_num:51|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enabled:False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
    Select images to measure:AF647, Autofluo, GFP, KUO
    Select objects to measure:ConvertImageToObjectsAF647, FilterObjectsDP, RemovedObjectsSP

MeasureObjectNeighbors:[module_num:52|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enabled:False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
    Select objects to measure:FilterObjectsDP
    Select neighboring objects to measure:FilterObjectsMK
    Method to determine neighbors:Within a specified distance
    Neighbor distance:20
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:53|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enabled:False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
    Select objects to measure:RemovedObjectsSP
    Select neighboring objects to measure:FilterObjectsMK
    Method to determine neighbors:Within a specified distance
    Neighbor distance:20
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:54|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enabled:False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
    Select objects to measure:FilterObjectsDP
    Select neighboring objects to measure:ConvertImageToObjectsAF647
    Method to determine neighbors:Within a specified distance
    Neighbor distance:20
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:55|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enabled:False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
    Select objects to measure:RemovedObjectsSP
    Select neighboring objects to measure:ConvertImageToObjectsAF647
    Method to determine neighbors:Within a specified distance
    Neighbor distance:20
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
ConvertObjectsToImage:[module_num:56|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enabled:False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
    Select the input objects:RemovedObjectsSP
    Name the output image:CellImageSP
    Select the color format:Grayscale
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
SaveImages:[module_num:57|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:CellImageSP
    Select method for constructing file names:From image filename
    Select image name for file prefix:KUO
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:SP
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Downloads/CellProfiler/VWF_048_movie/cp_output
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
