CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:68
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.', '', 'corrected_movies_2_1movieexampls/movies_apply_2_splitchannels + trackmate_output_split']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '^(?P<VWF>.*)_Ch(?P<Channelnb>.*)_xyzCorrected.tif']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
    Extract metadata?:Yes
    Metadata data type:Choose for each
    Metadata types:{"Channelnb": "integer", "FileLocation": "text", "Format1": "text", "Format2": "text", "Frame": "text", "Series": "text", "Timepoint": "integer", "VWF": "text"}
    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<VWF>.*)_Ch(?P<Channelnb>.*).ti(?P<Format1>.*) - T=(?P<Timepoint>.*).ti(?P<Format2>.*)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '', '0.5524285', '1.92']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
    Assign a name to:Images matching rules
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    Match metadata:[{'AF647': 'VWF', 'Autofluo': 'VWF', 'GFP': 'VWF', 'KUO': 'VWF'}, {'AF647': 'Timepoint', 'Autofluo': 'Timepoint', 'GFP': 'Timepoint', 'KUO': 'Timepoint'}]
    Image set matching method:Metadata
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    Assignments count:4
    Single images count:0
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    Process as 3D?:Yes
    Relative pixel spacing in X:0.487
    Relative pixel spacing in Y:0.487
    Relative pixel spacing in Z:3
    Select the rule criteria:and (file does contain "Ch1")
    Name to assign these images:GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Ch2")
    Name to assign these images:AF647
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Ch3") (directory doesnot contain "output")
    Name to assign these images:KUO
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Ch4")
    Name to assign these images:Autofluo
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:VWF

GaussianFilter:[module_num:5|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
    Select the input image:KUO
    Name the output image:GaussianFilterKUO
    Sigma:3

GaussianFilter:[module_num:6|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
    Select the input image:Autofluo
    Name the output image:GaussianFilterautofluo
    Sigma:3

GaussianFilter:[module_num:7|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
    Select the input image:GFP
    Name the output image:GaussianFilterGFP
    Sigma:2

HistogramEqualization:[module_num:8|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notes:['256 bin size']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
    Select the input image:GaussianFilterGFP
    Name the output image:HistogramEqualizationGFP
    Bins:200
    Mask:Leave blank
    Local:Yes
    Tile Size:50
    Clip limit:0.01
    Is you image 3D?:Yes
    Do framewise calculation?:Yes
    Tile Size (Z):5

ImageMath:[module_num:9|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notes:['raise power of results by 0.5', '', '1.2', '']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
    Operation:Subtract
    Raise the power of the result by:1
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMathKUOautofluo
    Image or measurement?:Image
    Select the first image:GaussianFilterKUO
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:GaussianFilterautofluo
    Multiply the second image by:1.4
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
HistogramEqualization:[module_num:10|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enabled:False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
    Select the input image:ImageAfterMathKUOautofluo
    Name the output image:HistogramEqualizationImageMath
    Bins:256
    Mask:Leave blank
    Local:Yes
    Tile Size:50
    Clip limit:0.01
    Is you image 3D?:Yes
    Do framewise calculation?:Yes
    Tile Size (Z):5

Threshold:[module_num:11|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notes:['smoothing scale 2, correction factor 1.4 ', 'robust background sd 41, 1.3 correction', 'Otsu 3 classes, 0.8 correction', 'trying Otsu two classes 2.3', '', 'INITIAL THRESHOLDING WITHOUT HISTOGRAM EQUALIZATION']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
    Select the input image:ImageAfterMathKUOautofluo
    Name the output image:ThresholdedKUO
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:2
    Threshold correction factor:1.6
    Lower and upper bounds on threshold:0.00001,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
Threshold:[module_num:12|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enabled:False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
    Select the input image:HistogramEqualizationImageMath
    Name the output image:ThresholdedKUO
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1
    Threshold correction factor:1.
    Lower and upper bounds on threshold:0.00001,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
RemoveHoles:[module_num:13|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
    Select the input image:ThresholdedKUO
    Name the output image:RemoveHolesKUO
    Size of holes to fill:20

Threshold:[module_num:14|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notes:['Global Otsu 3 classes foreground 1.5']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enabled:False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
    Select the input image:HistogramEqualizationGFP
    Name the output image:ThresholdGFP
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1
    Threshold correction factor:0.6
    Lower and upper bounds on threshold:0.00,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
ImageMath:[module_num:15|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enabled:False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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMathDP
    Image or measurement?:Image
    Select the first image:ThresholdedKUO
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:ThresholdGFP
    Multiply the second image by:1.0
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
Watershed:[module_num:16|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
    Select the input image:RemoveHolesKUO
    Name the output object:Watershed
    Use advanced settings?:No
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:1
    Compactness:0.0
    Footprint:10
    Downsample:2
    Separate watershed labels:No
    Declump method:Shape
    Reference Image:None
    Segmentation distance transform smoothing factor:1.0
    Minimum distance between seeds:1
    Minimum absolute internal distance:0.0
    Pixels from border to exclude:0
    Maximum number of seeds:-1
    Structuring element for seed dilation:Ball,1

Threshold:[module_num:17|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notes:['4 deviations']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
    Select the input image:Autofluo
    Name the output image:ThresholdImageAutofluo
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:5
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
Watershed:[module_num:18|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enabled:False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
    Select the input image:ThresholdImageAutofluo
    Name the output object:Watershedautofluo
    Use advanced settings?:No
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:1
    Compactness:0.0
    Footprint:10
    Downsample:2
    Separate watershed labels:No
    Declump method:Shape
    Reference Image:None
    Segmentation distance transform smoothing factor:1.0
    Minimum distance between seeds:1
    Minimum absolute internal distance:0.0
    Pixels from border to exclude:0
    Maximum number of seeds:-1
    Structuring element for seed dilation:Disk,1

MeasureObjectSizeShape:[module_num:19|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
    Select object sets to measure:Watershed
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:20|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
    Select images to measure:ThresholdImageAutofluo
    Select objects to measure:Watershed

FilterObjects:[module_num:21|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notes:['min vol of 350/ min axis of 12', '', '600', '', 'was 180', '', '2500 is volume for radius of 8.4 pixels, diam of 16pixels - changed to 4000 MIN 250']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
    Select the objects to filter:Watershed
    Name the output objects:FilterObjectsKUO
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:8
    Additional object count:0
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    Keep removed objects as a seperate set?:Yes
    Name the objects removed by the filter:RemovedObjectsAutofluo_size
    Select the measurement to filter by:AreaShape_Volume
    Filter using a minimum measurement value?:Yes
    Minimum value:300
    Filter using a maximum measurement value?:Yes
    Maximum value:4300
    Select the measurement to filter by:Intensity_UpperQuartileIntensity_ThresholdImageAutofluo
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.95
    Select the measurement to filter by:AreaShape_BoundingBoxMaximum_X
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:500
    Select the measurement to filter by:AreaShape_BoundingBoxMaximum_Y
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:500
    Select the measurement to filter by:AreaShape_BoundingBoxMinimum_X
    Filter using a minimum measurement value?:Yes
    Minimum value:15
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:AreaShape_BoundingBoxMinimum_Y
    Filter using a minimum measurement value?:Yes
    Minimum value:15
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:AreaShape_MinorAxisLength
    Filter using a minimum measurement value?:Yes
    Minimum value:10
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:AreaShape_MajorAxisLength
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:35

MeasureObjectIntensity:[module_num:22|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enabled:False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
    Select images to measure:ImageAfterMathDP
    Select objects to measure:FilterObjectsKUO

FilterObjects:[module_num:23|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notes:['upper quartile intensity should be 25% min is 1 (vs 0.5) - middle ground of 0.7']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enabled:False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
    Select the objects to filter:FilterObjectsKUO
    Name the output objects:FilterObjectsDP
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:Yes
    Name the objects removed by the filter:RemovedObjectsSP
    Select the measurement to filter by:Intensity_MaxIntensity_ImageAfterMathDP
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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
OverlayOutlines:[module_num:24|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ThresholdedKUO
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:Red
    Select objects to display:RemovedObjectsAutofluo_size
    Select outline color:Green
    Select objects to display:FilterObjectsDP
    Select outline color:#FFFA1E
    Select objects to display:RemovedObjectsSP

Resize:[module_num:25|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enabled:False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
    Select the input image:OrigOverlay
    Name the output image:ResizeOverlay
    Resizing method:Resize by specifying desired final dimensions
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    Width of the final image:500
    Height of the final image:500
    Interpolation method:Nearest Neighbor
    Method to specify the dimensions:Manual
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    Additional image count:0

SaveImages:[module_num:26|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:KUO
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:seg
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ConvertObjectsToImage:[module_num:27|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
    Select the input objects:FilterObjectsKUO
    Name the output image:FilterKuoImage
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:28|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
    Select the type of image to save:Image
    Select the image to save:FilterKuoImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:KUO
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

RescaleIntensity:[module_num:29|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enabled:False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
    Select the input image:AF647
    Name the output image:RescaleIntensityAF647
    Rescaling method:Stretch each image to use the full intensity range
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
ImageMath:[module_num:30|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enabled:False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
    Operation:None
    Raise the power of the result by:0.8
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMathAF647
    Image or measurement?:Image
    Select the image:RescaleIntensityAF647
    Multiply the image by:1.0
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    Image or measurement?:Image
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    Multiply the image by:1.0
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
GaussianFilter:[module_num:31|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enabled:False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
    Select the input image:ImageAfterMathAF647
    Name the output image:GaussianFilterAF647
    Sigma:2

HistogramEqualization:[module_num:32|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enabled:False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
    Select the input image:GaussianFilterAF647
    Name the output image:HistogramEqualizationAF647
    Bins:256
    Mask:Leave blank
    Local:Yes
    Tile Size:50
    Clip limit:0.01
    Is you image 3D?:Yes
    Do framewise calculation?:No
    Tile Size (Z):5

Threshold:[module_num:33|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notes:['0.027 threshold bound', '', 'foreground, 2 correction, smotting of 1']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enabled:False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
    Select the input image:GaussianFilterAF647
    Name the output image:ThresholdAF647
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:1.5
    Lower and upper bounds on threshold:0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
RemoveHoles:[module_num:34|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notes:['20', 'tried 145 too']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enabled:False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
    Select the input image:ThresholdAF647
    Name the output image:RemoveHolesAF647
    Size of holes to fill:145

ConvertImageToObjects:[module_num:35|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enabled:False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
    Select the input image:RemoveHolesAF647
    Name the output object:ConvertImageToObjectsAF647
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

MeasureObjectSizeShape:[module_num:36|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enabled:False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
    Select object sets to measure:ConvertImageToObjectsAF647
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

FilterObjects:[module_num:37|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enabled:False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
    Select the objects to filter:ConvertImageToObjectsAF647
    Name the output objects:FilterObjectsAF647
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_Volume
    Filter using a minimum measurement value?:Yes
    Minimum value:2500
    Filter using a maximum measurement value?:No
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
OverlayOutlines:[module_num:38|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ImageAfterMathAF647
    Name the output image:OrigOverlayAF647
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:Red
    Select objects to display:ConvertImageToObjectsAF647

SaveImages:[module_num:39|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:OrigOverlayAF647
    Select method for constructing file names:From image filename
    Select image name for file prefix:AF647
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:vessel
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

RescaleIntensity:[module_num:40|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enabled:False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
    Select the input image:GFP
    Name the output image:RescaleIntensityGFP
    Rescaling method:Stretch each image to use the full intensity range
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
ImageMath:[module_num:41|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enabled:False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
    Operation:None
    Raise the power of the result by:0.8
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMathRIGFP
    Image or measurement?:Image
    Select the image:RescaleIntensityGFP
    Multiply the image by:1.0
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    Image or measurement?:Image
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    Multiply the image by:1.0
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
Threshold:[module_num:42|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notes:['9 sd, 1.3 captures bright MK', '', 'on HistEqGFP: adaptive robust background, sd of 6, threshold correction factor of 1, size of adaptive window of 50']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enabled:False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
    Select the input image:GaussianFilterGFP
    Name the output image:ThresholdIlastik
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.4
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
Watershed:[module_num:43|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enabled:False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
    Select the input image:ThresholdIlastik
    Name the output object:Mk_segmentation
    Use advanced settings?:No
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:1
    Compactness:0.0
    Footprint:30
    Downsample:3
    Separate watershed labels:No
    Declump method:Shape
    Reference Image:None
    Segmentation distance transform smoothing factor:1.0
    Minimum distance between seeds:1
    Minimum absolute internal distance:0.0
    Pixels from border to exclude:0
    Maximum number of seeds:-1
    Structuring element for seed dilation:Disk,1

MeasureObjectIntensity:[module_num:44|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enabled:False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
    Select images to measure:AF647, Autofluo, GFP, KUO, track
    Select objects to measure:FilterObjectsDP, Mk_segmentation, RemovedObjectsSP, Watershedautofluo

MeasureObjectSizeShape:[module_num:45|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enabled:False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
    Select object sets to measure:ConvertImageToObjectsAF647, Mk_segmentation
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:46|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notes:['MK based on size', 'was 1500']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enabled:False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
    Select the objects to filter:Mk_segmentation
    Name the output objects:FilterObjectsMK
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_Volume
    Filter using a minimum measurement value?:Yes
    Minimum value:2500
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:47|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notes:['Platelets that are small and in the vessels']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enabled:False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
    Select the objects to filter:Mk_segmentation
    Name the output objects:FilterObjects_plt
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Keep removed objects as a seperate set?:Yes
    Name the objects removed by the filter:SmallGFP_out
    Select the measurement to filter by:Intensity_MaxIntensity_AF647
    Filter using a minimum measurement value?:Yes
    Minimum value:0.5
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:AreaShape_Volume
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:250

FilterObjects:[module_num:48|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notes:['Progenitors that are smaller than MK but bigger than platelets']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enabled:False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
    Select the objects to filter:Mk_segmentation
    Name the output objects:FilterObjects_progenitors
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_Volume
    Filter using a minimum measurement value?:Yes
    Minimum value:250
    Filter using a maximum measurement value?:Yes
    Maximum value:2500

MeasureObjectSizeShape:[module_num:49|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enabled:False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
    Select object sets to measure:FilterObjectsMK, FilterObjects_plt, FilterObjects_progenitors, SmallGFP_out
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

OverlayOutlines:[module_num:50|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ImageAfterMathRIGFP
    Name the output image:OrigOverlayMK
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#00F500
    Select objects to display:FilterObjectsMK
    Select outline color:#00FCD8
    Select objects to display:FilterObjects_progenitors
    Select outline color:#FF001A
    Select objects to display:FilterObjects_plt
    Select outline color:Yellow
    Select objects to display:ConvertImageToObjectsAF647
    Select outline color:White
    Select objects to display:FilterObjectsDP
    Select outline color:#C9C9C9
    Select objects to display:RemovedObjectsSP

SaveImages:[module_num:51|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:OrigOverlayMK
    Select method for constructing file names:From image filename
    Select image name for file prefix:GFP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:GFP
    Saved file format:tiff
    Output file location:Default Output Folder|Downloads/CellProfiler/movie_pipeline_test/15_MK_overlay
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

MeasureObjectNeighbors:[module_num:52|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enabled:False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
    Select objects to measure:FilterObjectsDP
    Select neighboring objects to measure:FilterObjectsMK
    Method to determine neighbors:Within a specified distance
    Neighbor distance:30
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:53|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enabled:False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
    Select objects to measure:FilterObjectsDP
    Select neighboring objects to measure:FilterObjects_progenitors
    Method to determine neighbors:Within a specified distance
    Neighbor distance:30
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:54|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enabled:False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
    Select objects to measure:FilterObjectsDP
    Select neighboring objects to measure:FilterObjects_plt
    Method to determine neighbors:Within a specified distance
    Neighbor distance:30
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:55|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enabled:False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
    Select objects to measure:FilterObjectsDP
    Select neighboring objects to measure:SmallGFP_out
    Method to determine neighbors:Within a specified distance
    Neighbor distance:30
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:56|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enabled:False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
    Select objects to measure:RemovedObjectsSP
    Select neighboring objects to measure:FilterObjectsMK
    Method to determine neighbors:Within a specified distance
    Neighbor distance:30
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:57|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enabled:False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
    Select objects to measure:RemovedObjectsSP
    Select neighboring objects to measure:FilterObjects_progenitors
    Method to determine neighbors:Within a specified distance
    Neighbor distance:30
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:58|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enabled:False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
    Select objects to measure:RemovedObjectsSP
    Select neighboring objects to measure:FilterObjects_plt
    Method to determine neighbors:Within a specified distance
    Neighbor distance:30
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:59|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enabled:False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
    Select objects to measure:FilterObjectsDP
    Select neighboring objects to measure:ConvertImageToObjectsAF647
    Method to determine neighbors:Within a specified distance
    Neighbor distance:30
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:60|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enabled:False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
    Select objects to measure:RemovedObjectsSP
    Select neighboring objects to measure:ConvertImageToObjectsAF647
    Method to determine neighbors:Within a specified distance
    Neighbor distance:30
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:61|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enabled:False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
    Select objects to measure:FilterObjectsDP
    Select neighboring objects to measure:Watershedautofluo
    Method to determine neighbors:Within a specified distance
    Neighbor distance:30
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:62|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enabled:False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
    Select objects to measure:RemovedObjectsSP
    Select neighboring objects to measure:Watershedautofluo
    Method to determine neighbors:Within a specified distance
    Neighbor distance:30
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:63|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enabled:False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
    Select objects to measure:RemovedObjectsSP
    Select neighboring objects to measure:SmallGFP_out
    Method to determine neighbors:Within a specified distance
    Neighbor distance:30
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
ExportToSpreadsheet:[module_num:64|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enabled:False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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|\g<VWF>\g<Timepoint>
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|Metadata_Timepoint,Image|Metadata_Frame,Image|Metadata_Series,Image|Metadata_VWF,Image|Metadata_Channelnb,Image|Metadata_FileLocation,RemovedObjectsSP|Intensity_MeanIntensity_Autofluo,RemovedObjectsSP|Intensity_MeanIntensity_KUO,RemovedObjectsSP|Intensity_MeanIntensity_AF647,RemovedObjectsSP|Intensity_MeanIntensity_GFP,RemovedObjectsSP|Intensity_MeanIntensity_track,RemovedObjectsSP|Intensity_UpperQuartileIntensity_track,RemovedObjectsSP|Intensity_UpperQuartileIntensity_Autofluo,RemovedObjectsSP|Intensity_UpperQuartileIntensity_GFP,RemovedObjectsSP|Intensity_UpperQuartileIntensity_AF647,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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
ConvertObjectsToImage:[module_num:65|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enabled:False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
    Select the input objects:FilterObjectsDP
    Name the output image:CellImageDP
    Select the color format:Grayscale
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
ConvertObjectsToImage:[module_num:66|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enabled:False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
    Select the input objects:RemovedObjectsSP
    Name the output image:CellImageSP
    Select the color format:Grayscale
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
SaveCroppedObjects:[module_num:67|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enabled:False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
    Objects:No
    Directory:Images
    Saved file format:FilterObjectsDP
    Do you want to save cropped images or object masks?:No
    Image:None

SaveCroppedObjects:[module_num:68|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enabled:False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
    Objects:No
    Directory:Images
    Saved file format:RemovedObjectsSP
    Do you want to save cropped images or object masks?:No
    Image:None
