CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:58
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.', '', 'corrected_movies_2_1movieexampls/movies_apply_2_splitchannels + trackmate_output_split']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '^(?P<VWF>.*)_Ch(?P<Channelnb>.*)_xyzCorrected.tif']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
    Extract metadata?:Yes
    Metadata data type:Choose for each
    Metadata types:{"Channelnb": "integer", "FileLocation": "text", "Format1": "text", "Format2": "text", "Frame": "text", "Series": "text", "Timepoint": "integer", "VWF": "text"}
    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<VWF>.*)_Ch(?P<Channelnb>.*).ti(?P<Format1>.*) - T=(?P<Timepoint>.*).ti(?P<Format2>.*)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '', '0.5524285', '1.92']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
    Assign a name to:Images matching rules
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    Match metadata:[{'AF647': 'VWF', 'Autofluo': 'VWF', 'GFP': 'VWF', 'KUO': 'VWF', 'KuO_segmentation': 'VWF', 'track': 'VWF', 'Ilastik_GFP': 'VWF'}, {'AF647': 'Timepoint', 'Autofluo': 'Timepoint', 'GFP': 'Timepoint', 'KUO': 'Timepoint', 'KuO_segmentation': 'Timepoint', 'track': 'Timepoint', 'Ilastik_GFP': 'Timepoint'}]
    Image set matching method:Metadata
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    Assignments count:7
    Single images count:0
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    Process as 3D?:Yes
    Relative pixel spacing in X:0.487
    Relative pixel spacing in Y:0.487
    Relative pixel spacing in Z:3.00
    Select the rule criteria:and (file does contain "Ch1")
    Name to assign these images:GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Ch2")
    Name to assign these images:AF647
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Ch3") (directory doesnot contain "output")
    Name to assign these images:KUO
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Ch4")
    Name to assign these images:Autofluo
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Ch8")
    Name to assign these images:track
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Ch3") (directory does contain "output") (file doesnot contain "seg")
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    Name to assign these objects:KuO_segmentation
    Select the image type:Objects
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    Select the rule criteria:and (file does contain "Ch5")
    Name to assign these images:Ilastik_GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:VWF

GaussianFilter:[module_num:5|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
    Select the input image:KUO
    Name the output image:GaussianFilterKUO
    Sigma:3

GaussianFilter:[module_num:6|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
    Select the input image:Autofluo
    Name the output image:GaussianFilterautofluo
    Sigma:3

GaussianFilter:[module_num:7|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
    Select the input image:GFP
    Name the output image:GaussianFilterGFP
    Sigma:2

HistogramEqualization:[module_num:8|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notes:['256 bin size', '', 'The GFP signal is enhanced for the SP/DP filter']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
    Select the input image:GaussianFilterGFP
    Name the output image:HistogramEqualizationGFP
    Bins:200
    Mask:Leave blank
    Local:Yes
    Tile Size:50
    Clip limit:0.01
    Is you image 3D?:Yes
    Do framewise calculation?:Yes
    Tile Size (Z):5

ImageMath:[module_num:9|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notes:['raise power of results by 0.5', '', '1.2']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
    Operation:Subtract
    Raise the power of the result by:0.6
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMathKUOautofluo
    Image or measurement?:Image
    Select the first image:GaussianFilterKUO
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:GaussianFilterautofluo
    Multiply the second image by:1.4
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
Threshold:[module_num:10|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notes:['smoothing scale 2, correction factor 1.4 ', 'robust background sd 41, 1.3 correction', 'Otsu 3 classes, 0.8 correction', 'trying Otsu two classes 2.3']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
    Select the input image:ImageAfterMathKUOautofluo
    Name the output image:ThresholdedKUO
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1
    Threshold correction factor:1.3
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
RemoveHoles:[module_num:11|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enabled:False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
    Select the input image:ThresholdedKUO
    Name the output image:RemoveHolesKUO
    Size of holes to fill:20

Threshold:[module_num:12|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notes:['Removed from v2 to v3 using the GFP input instead!']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enabled:False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
    Select the input image:HistogramEqualizationGFP
    Name the output image:ThresholdGFP
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.5
    Lower and upper bounds on threshold:0.00,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
Threshold:[module_num:13|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notes:['Otsu 2 classes 1.3', '', '9 sd, 1.3 captures bright MK', '', 'on HistEqGFP: adaptive robust background, sd of 6, threshold correction factor of 1, size of adaptive window of 50']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
    Select the input image:Ilastik_GFP
    Name the output image:ThresholdIlastikDP
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.1
    Lower and upper bounds on threshold:0.00001,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
ImageMath:[module_num:14|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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMathDP
    Image or measurement?:Image
    Select the first image:ThresholdedKUO
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:ThresholdIlastikDP
    Multiply the second image by:1.0
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
RescaleIntensity:[module_num:15|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
    Select the input image:GFP
    Name the output image:RescaleIntensityGFP
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:16|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
    Select the input image:HistogramEqualizationGFP
    Name the output image:HisteqRescaleIntensityGFP
    Rescaling method:Stretch each image to use the full intensity range
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
ImageMath:[module_num:17|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
    Operation:None
    Raise the power of the result by:0.8
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMathRIGFP
    Image or measurement?:Image
    Select the first image:RescaleIntensityGFP
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
Threshold:[module_num:18|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
    Select the input image:Ilastik_GFP
    Name the output image:ThresholdIlastik
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.3
    Lower and upper bounds on threshold:0.00001,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
Watershed:[module_num:19|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
    Select the input image:ThresholdIlastik
    Name the output object:Mk_segmentation
    Use advanced settings?:No
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:1
    Compactness:0.0
    Footprint:30
    Downsample:3
    Separate watershed labels:No
    Declump method:Shape
    Reference Image:None
    Segmentation distance transform smoothing factor:1.0
    Minimum distance between seeds:1
    Minimum absolute internal distance:0.0
    Pixels from border to exclude:0
    Maximum number of seeds:-1
    Structuring element for seed dilation:Disk,1

MeasureObjectSizeShape:[module_num:20|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
    Select object sets to measure:Mk_segmentation
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:21|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notes:['MK based on size', 'was 1500']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
    Select the objects to filter:Mk_segmentation
    Name the output objects:FilterObjectsMK
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_Volume
    Filter using a minimum measurement value?:Yes
    Minimum value:2500
    Filter using a maximum measurement value?:No
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
MaskImage:[module_num:22|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
    Select the input image:ImageAfterMathDP
    Name the output image:MaskedImageAfterMathDP
    Use objects or an image as a mask?:Objects
    Select object for mask:FilterObjectsMK
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    Invert the mask?:Yes

RescaleIntensity:[module_num:23|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enabled:False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
    Select the input image:AF647
    Name the output image:RescaleIntensityAF647
    Rescaling method:Stretch each image to use the full intensity range
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
ImageMath:[module_num:24|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enabled:False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
    Operation:None
    Raise the power of the result by:0.8
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMathAF647
    Image or measurement?:Image
    Select the first image:RescaleIntensityAF647
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
GaussianFilter:[module_num:25|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enabled:False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
    Select the input image:ImageAfterMathAF647
    Name the output image:GaussianFilterAF647
    Sigma:2

HistogramEqualization:[module_num:26|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enabled:False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
    Select the input image:GaussianFilterAF647
    Name the output image:HistogramEqualizationAF647
    Bins:256
    Mask:Leave blank
    Local:Yes
    Tile Size:50
    Clip limit:0.01
    Is you image 3D?:Yes
    Do framewise calculation?:No
    Tile Size (Z):5

Threshold:[module_num:27|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notes:['0.027 threshold bound', '', 'foreground, 2 correction, smotting of 1', '', '0 smoothing, 1..5 correction']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enabled:False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
    Select the input image:GaussianFilterAF647
    Name the output image:ThresholdAF647
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:2
    Threshold correction factor:2
    Lower and upper bounds on threshold:0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
RemoveHoles:[module_num:28|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notes:['20', 'tried 145 too']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enabled:False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
    Select the input image:ThresholdAF647
    Name the output image:RemoveHolesAF647
    Size of holes to fill:145

ConvertImageToObjects:[module_num:29|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enabled:False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
    Select the input image:RemoveHolesAF647
    Name the output object:ConvertImageToObjectsAF647
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

MeasureObjectSizeShape:[module_num:30|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enabled:False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
    Select object sets to measure:ConvertImageToObjectsAF647
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

FilterObjects:[module_num:31|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enabled:False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
    Select the objects to filter:ConvertImageToObjectsAF647
    Name the output objects:FilterObjectsAF647
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_Volume
    Filter using a minimum measurement value?:Yes
    Minimum value:2500
    Filter using a maximum measurement value?:No
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
MaskImage:[module_num:32|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enabled:False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
    Select the input image:ImageAfterMathDP
    Name the output image:MaskedImageAfterMathDP
    Use objects or an image as a mask?:Objects
    Select object for mask:FilterObjectsMK
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    Invert the mask?:Yes

Watershed:[module_num:33|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enabled:False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
    Select the input image:RemoveHolesKUO
    Name the output object:Watershed
    Use advanced settings?:No
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:1
    Compactness:0.0
    Footprint:10
    Downsample:2
    Separate watershed labels:No
    Declump method:Shape
    Reference Image:None
    Segmentation distance transform smoothing factor:1.0
    Minimum distance between seeds:1
    Minimum absolute internal distance:0.0
    Pixels from border to exclude:0
    Maximum number of seeds:-1
    Structuring element for seed dilation:Ball,1

MeasureObjectSizeShape:[module_num:34|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enabled:False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
    Select object sets to measure:Watershed
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:35|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notes:['600', '', 'was 180']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enabled:False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
    Select the objects to filter:Watershed
    Name the output objects:FilterObjectsKUO
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_Volume
    Filter using a minimum measurement value?:Yes
    Minimum value:250
    Filter using a maximum measurement value?:No
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
Threshold:[module_num:36|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
    Select the input image:Autofluo
    Name the output image:ThresholdImageAutofluo
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:4
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
Watershed:[module_num:37|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
    Select the input image:ThresholdImageAutofluo
    Name the output object:Watershedautofluo
    Use advanced settings?:No
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:1
    Compactness:0.0
    Footprint:10
    Downsample:2
    Separate watershed labels:No
    Declump method:Shape
    Reference Image:None
    Segmentation distance transform smoothing factor:1.0
    Minimum distance between seeds:1
    Minimum absolute internal distance:0.0
    Pixels from border to exclude:0
    Maximum number of seeds:-1
    Structuring element for seed dilation:Disk,1

MeasureObjectIntensity:[module_num:38|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
    Select images to measure:ImageAfterMathDP, MaskedImageAfterMathDP
    Select objects to measure:KuO_segmentation

FilterObjects:[module_num:39|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notes:['upper quartile intensity should be 25% min is 1 (vs 0.5)']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
    Select the objects to filter:KuO_segmentation
    Name the output objects:FilterObjectsDP
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:Yes
    Name the objects removed by the filter:RemovedObjectsSP
    Select the measurement to filter by:Intensity_MaxIntensity_MaskedImageAfterMathDP
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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
ConvertObjectsToImage:[module_num:40|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enabled:False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
    Select the input objects:ConvertImageToObjectsAF647
    Name the output image:ImageConvertImageToObjectsAF647
    Select the color format:Binary (black & white)
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
ImageMath:[module_num:41|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enabled:False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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMathAF647Invert
    Image or measurement?:Image
    Select the first image:ImageConvertImageToObjectsAF647
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
DistanceTransform:[module_num:42|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enabled:False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
    Select the input image:ImageAfterMathAF647Invert
    Name the output image:DistanceTransformAF647
    Rescale values from 0 to 1?:No

MeasureObjectIntensity:[module_num:43|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enabled:False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
    Select images to measure:DistanceTransformAF647
    Select objects to measure:FilterObjectsDP, RemovedObjectsSP

OverlayOutlines:[module_num:44|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ImageAfterMathAF647
    Name the output image:OrigOverlayAF647
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:Red
    Select objects to display:ConvertImageToObjectsAF647

SaveImages:[module_num:45|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:OrigOverlayAF647
    Select method for constructing file names:From image filename
    Select image name for file prefix:AF647
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:vessel
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

Threshold:[module_num:46|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enabled:False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
    Select the input image:Ilastik_GFP
    Name the output image:ThresholdIlastikforPLT
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
DilateObjects:[module_num:47|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
    Select the input object:FilterObjectsMK
    Name the output object:DilateObjectsMK
    Structuring element:disk,3

MaskImage:[module_num:48|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
    Select the input image:ThresholdIlastik
    Name the output image:MaskedThresholdIlastik
    Use objects or an image as a mask?:Objects
    Select object for mask:DilateObjectsMK
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    Invert the mask?:Yes

MaskImage:[module_num:49|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
    Select the input image:MaskedThresholdIlastik
    Name the output image:MaskedThresholdIlastik2
    Use objects or an image as a mask?:Objects
    Select object for mask:FilterObjectsDP
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    Invert the mask?:Yes

Watershed:[module_num:50|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
    Select the input image:MaskedThresholdIlastik2
    Name the output object:WatershedMaskedThresholdIlastik
    Use advanced settings?:No
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:1
    Compactness:0.0
    Footprint:4
    Downsample:1
    Separate watershed labels:No
    Declump method:Shape
    Reference Image:None
    Segmentation distance transform smoothing factor:1.0
    Minimum distance between seeds:1
    Minimum absolute internal distance:0.0
    Pixels from border to exclude:0
    Maximum number of seeds:-1
    Structuring element for seed dilation:Disk,1

MeasureObjectIntensity:[module_num:51|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
    Select images to measure:Autofluo, GFP, KUO, track
    Select objects to measure:FilterObjectsDP, Mk_segmentation, RemovedObjectsSP, WatershedMaskedThresholdIlastik, Watershedautofluo

MeasureObjectSizeShape:[module_num:52|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
    Select object sets to measure:WatershedMaskedThresholdIlastik
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

FilterObjects:[module_num:53|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notes:['Platelets that are small and in the vessels']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
    Select the objects to filter:WatershedMaskedThresholdIlastik
    Name the output objects:FilterObjects_plt
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_Volume
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:200

FilterObjects:[module_num:54|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notes:['clumps tend to be bright red, could even use a less processed version of AF647']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
    Select the objects to filter:WatershedMaskedThresholdIlastik
    Name the output objects:FilterObjects_clump
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_Volume
    Filter using a minimum measurement value?:Yes
    Minimum value:200
    Filter using a maximum measurement value?:Yes
    Maximum value:1200

FilterObjects:[module_num:55|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enabled:False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
    Select the objects to filter:Mk_segmentation
    Name the output objects:SmallGFP_out
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_ThresholdAF647
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.8
    Select the measurement to filter by:AreaShape_Volume
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:250

FilterObjects:[module_num:56|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notes:['Progenitors that are smaller than MK but bigger than platelets', '', 'size changed to be bigger than clumps for this pipeline !!!']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
    Select the objects to filter:Mk_segmentation
    Name the output objects:FilterObjects_progenitors
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_Volume
    Filter using a minimum measurement value?:Yes
    Minimum value:1200
    Filter using a maximum measurement value?:Yes
    Maximum value:2500

MeasureObjectSizeShape:[module_num:57|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
    Select object sets to measure:FilterObjectsMK, FilterObjects_plt, FilterObjects_progenitors, Watershedautofluo
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

OverlayOutlines:[module_num:58|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:HisteqRescaleIntensityGFP
    Name the output image:OrigOverlayMK
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#00F500
    Select objects to display:FilterObjectsMK
    Select outline color:#00FCD8
    Select objects to display:FilterObjects_progenitors
    Select outline color:#FF001A
    Select objects to display:FilterObjects_plt
    Select outline color:White
    Select objects to display:FilterObjectsDP
    Select outline color:#C9C9C9
    Select objects to display:RemovedObjectsSP
