CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:74
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:or (file does endwith ".tif") (file does endwith ".tiff")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<VWF>.*)_Ch(?P<Channelnb>.*).ti(?P<Format>.*)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{'AF647': 'VWF', 'Autofluo': 'VWF', 'GFP': 'VWF', 'Ilastik': 'VWF', 'KUO': 'VWF'}]
    Image set matching method:Metadata
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    Assignments count:5
    Single images count:0
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    Process as 3D?:Yes
    Relative pixel spacing in X:0.8286
    Relative pixel spacing in Y:0.8286
    Relative pixel spacing in Z:3
    Select the rule criteria:and (metadata does Channelnb "1")
    Name to assign these images:GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channelnb "2")
    Name to assign these images:AF647
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channelnb "3")
    Name to assign these images:KUO
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channelnb "4")
    Name to assign these images:Autofluo
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channelnb "5")
    Name to assign these images:Ilastik
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:VWF

Threshold:[module_num:5|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notes:['This module was to threshold the Ilastik Images', 'was minimum cross entropy with smoothing of 3 and correction of 3.5', '', 'was Ostu 2 classes threshold correction of 3.5']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
    Select the input image:Ilastik
    Name the output image:ThresholdIlastik
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
GaussianFilter:[module_num:6|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
    Select the input image:Autofluo
    Name the output image:GaussianFilterautofluo
    Sigma:3

GaussianFilter:[module_num:7|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
    Select the input image:KUO
    Name the output image:GaussianFilterKUO
    Sigma:3

ImageMath:[module_num:8|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notes:['was raised by 1 - was multiplied by 1.3']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
    Operation:Subtract
    Raise the power of the result by:0.6
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMathKUOautofluo
    Image or measurement?:Image
    Select the first image:GaussianFilterKUO
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:GaussianFilterautofluo
    Multiply the second image by:1.3
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
HistogramEqualization:[module_num:9|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enabled:False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
    Select the input image:ImageAfterMathKUOautofluo
    Name the output image:HistogramEqualization
    Bins:256
    Mask:Leave blank
    Local:Yes
    Tile Size:50
    Clip limit:0.01
    Is you image 3D?:No
    Do framewise calculation?:No
    Tile Size (Z):5

Threshold:[module_num:10|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
    Select the input image:ImageAfterMathKUOautofluo
    Name the output image:ThresholdedKUO
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
RemoveHoles:[module_num:11|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
    Select the input image:ThresholdedKUO
    Name the output image:RemoveHolesKUO
    Size of holes to fill:10

Watershed:[module_num:12|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
    Select the input image:RemoveHolesKUO
    Name the output object:WatershedKUO
    Use advanced settings?:No
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:1
    Compactness:0.0
    Footprint:10
    Downsample:2
    Separate watershed labels:No
    Declump method:Shape
    Reference Image:None
    Segmentation distance transform smoothing factor:1.0
    Minimum distance between seeds:1
    Minimum absolute internal distance:0.0
    Pixels from border to exclude:0
    Maximum number of seeds:-1
    Structuring element for seed dilation:Ball,1

MeasureObjectSizeShape:[module_num:13|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
    Select object sets to measure:WatershedKUO
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

Threshold:[module_num:14|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
    Select the input image:GaussianFilterautofluo
    Name the output image:ThresholdAutofluo
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:4
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
MeasureObjectIntensity:[module_num:15|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
    Select images to measure:ThresholdAutofluo, ThresholdIlastik
    Select objects to measure:WatershedKUO

FilterObjects:[module_num:16|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notes:['min vol was 300']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
    Select the objects to filter:WatershedKUO
    Name the output objects:FilterObjectsKUO
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:3
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_Volume
    Filter using a minimum measurement value?:Yes
    Minimum value:200
    Filter using a maximum measurement value?:Yes
    Maximum value:2500
    Select the measurement to filter by:Intensity_UpperQuartileIntensity_ThresholdAutofluo
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.8
    Select the measurement to filter by:Intensity_UpperQuartileIntensity_ThresholdIlastik
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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
Resize:[module_num:17|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enabled:False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
    Select the input image:Autofluo
    Name the output image:ResizeAutofluo
    Resizing method:Resize by a fraction or multiple of the original size
    X Resizing factor:0.25
    Y Resizing factor:0.25
    Z Resizing factor:1.0
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    Interpolation method:Nearest Neighbor
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    Additional image count:3
    Select the additional image?:KUO
    Name the output image:ResizedKUO
    Select the additional image?:GFP
    Name the output image:ResizedGFP
    Select the additional image?:AF647
    Name the output image:ResizedAF647

ImageMath:[module_num:18|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enabled:False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
    Operation:None
    Raise the power of the result by:0.75
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMathautofluo
    Image or measurement?:Image
    Select the first image:ResizeAutofluo
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
MeasureImageIntensity:[module_num:19|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enabled:False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
    Select images to measure:GaussianFilterautofluo
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:No
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
Threshold:[module_num:20|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enabled:False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
    Select the input image:GaussianFilterautofluo
    Name the output image:Thresholdimage
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:0.9
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
MaskImage:[module_num:21|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enabled:False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
    Select the input image:GaussianFilterautofluo
    Name the output image:Autofluotiles
    Use objects or an image as a mask?:Image
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    Select image for mask:Thresholdimage
    Invert the mask?:No

Threshold:[module_num:22|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notes:['use the imaged where all the autofluorescent cells have been removed to generate the threshold? ']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enabled:False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
    Select the input image:Autofluotiles
    Name the output image:Thresholdedbone
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.15
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
MaskImage:[module_num:23|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enabled:False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
    Select the input image:GaussianFilterautofluo
    Name the output image:Bonemarrow
    Use objects or an image as a mask?:Image
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    Select image for mask:Thresholdedbone
    Invert the mask?:Yes

ImageMath:[module_num:24|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enabled:False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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:Bonemarrow
    Image or measurement?:Image
    Select the first image:Autofluotiles
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ConvertImageToObjects:[module_num:25|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enabled:False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
    Select the input image:Bonemarrow
    Name the output object:ConvertImageToObjectsBoneMarrow
    Convert to boolean image:No
    Preserve original labels:Yes
    Background label:0
    Connectivity:0

OverlayOutlines:[module_num:26|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Ilastik
    Name the output image:BM_Ilastik_Overlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:Red
    Select objects to display:ConvertImageToObjectsBoneMarrow

ConvertImageToObjects:[module_num:27|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
    Select the input image:ThresholdIlastik
    Name the output object:ConvertImageToObjectsIlastik
    Convert to boolean image:Yes
    Preserve original labels:Yes
    Background label:0
    Connectivity:0

FillObjects:[module_num:28|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
    Select the input object:ConvertImageToObjectsIlastik
    Name the output object:FillObjectsIlastik
    Minimum hole size:50
    Planewise fill:Yes
    Filling method:Holes

MeasureObjectSizeShape:[module_num:29|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notes:['BONE MARROW VOLUME']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
    Select object sets to measure:ConvertImageToObjectsIlastik, FillObjectsIlastik
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

OverlayObjects:[module_num:30|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enabled:False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
    Input:None
    Name the output image:OverlayObjects
    Objects:Do not use
    Opacity:0.3

ImageMath:[module_num:31|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enabled:False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
    Operation:None
    Raise the power of the result by:0.9
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMathKUO
    Image or measurement?:Image
    Select the first image:KUO
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
Threshold:[module_num:32|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notes:['Thresholding to exclude the bright autofluorescent background, threshold is including some pixels in the marrow (not high enough) yet it is not including everything on the edges (too high) ']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enabled:False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
    Select the input image:ImageAfterMathKUO
    Name the output image:BackgroundThresholdKUO
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.03,1
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
ImageMath:[module_num:33|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
    Operation:None
    Raise the power of the result by:0.8
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMathAF647
    Image or measurement?:Image
    Select the first image:AF647
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
HistogramEqualization:[module_num:34|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
    Select the input image:ImageAfterMathAF647
    Name the output image:HistogramEqualizationAF647
    Bins:256
    Mask:Leave blank
    Local:Yes
    Tile Size:50
    Clip limit:0.01
    Is you image 3D?:No
    Do framewise calculation?:No
    Tile Size (Z):5

GaussianFilter:[module_num:35|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
    Select the input image:HistogramEqualizationAF647
    Name the output image:GaussianFilterAF647
    Sigma:2

Threshold:[module_num:36|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notes:['Ostu 3 classes, foreground no smoothing 1.5 correction']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
    Select the input image:GaussianFilterAF647
    Name the output image:ThresholdAF647
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:2.6
    Lower and upper bounds on threshold:0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
RemoveHoles:[module_num:37|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
    Select the input image:ThresholdAF647
    Name the output image:RemoveHolesAF647
    Size of holes to fill:20

ConvertImageToObjects:[module_num:38|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
    Select the input image:RemoveHolesAF647
    Name the output object:WatershedAF647
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

GaussianFilter:[module_num:39|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
    Select the input image:GFP
    Name the output image:GaussianFilterGFP
    Sigma:2

HistogramEqualization:[module_num:40|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
    Select the input image:GaussianFilterGFP
    Name the output image:HistogramEqualizationGFP
    Bins:350
    Mask:Leave blank
    Local:Yes
    Tile Size:50
    Clip limit:0.01
    Is you image 3D?:Yes
    Do framewise calculation?:No
    Tile Size (Z):5

Threshold:[module_num:41|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
    Select the input image:HistogramEqualizationGFP
    Name the output image:ThresholdGFP
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.03,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
RemoveHoles:[module_num:42|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
    Select the input image:ThresholdGFP
    Name the output image:RemoveHolesGFP
    Size of holes to fill:20

Watershed:[module_num:43|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
    Select the input image:RemoveHolesGFP
    Name the output object:WatershedGFP
    Use advanced settings?:No
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:1
    Compactness:0.0
    Footprint:10
    Downsample:2
    Separate watershed labels:No
    Declump method:Shape
    Reference Image:None
    Segmentation distance transform smoothing factor:1.0
    Minimum distance between seeds:1
    Minimum absolute internal distance:0.0
    Pixels from border to exclude:0
    Maximum number of seeds:-1
    Structuring element for seed dilation:Disk,1

MeasureObjectSizeShape:[module_num:44|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
    Select object sets to measure:WatershedGFP
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

FilterObjects:[module_num:45|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
    Select the objects to filter:WatershedGFP
    Name the output objects:FilterObjectsMK
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:Yes
    Name the objects removed by the filter:RemovedObjectsMKprogenitors
    Select the measurement to filter by:AreaShape_Volume
    Filter using a minimum measurement value?:Yes
    Minimum value:2500
    Filter using a maximum measurement value?:No
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
ImageMath:[module_num:46|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enabled:False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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMathBM2
    Image or measurement?:Image
    Select the first image:ThresholdIlastik
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:RemoveHolesAF647
    Multiply the second image by:1.0
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    Image or measurement?:Image
    Select the third image:RemoveHolesGFP
    Multiply the third image by:1.0
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
ConvertImageToObjects:[module_num:47|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enabled:False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
    Select the input image:ImageAfterMathBM2
    Name the output object:ObjectBM2
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

ImageMath:[module_num:48|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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMathDP
    Image or measurement?:Image
    Select the first image:RemoveHolesKUO
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:RemoveHolesGFP
    Multiply the second image by:1.0
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
MeasureObjectIntensity:[module_num:49|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
    Select images to measure:ImageAfterMathDP
    Select objects to measure:FilterObjectsKUO

FilterObjects:[module_num:50|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
    Select the objects to filter:FilterObjectsKUO
    Name the output objects:FilterObjectsDP
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:Yes
    Name the objects removed by the filter:RemovedObjectsSP
    Select the measurement to filter by:Intensity_MeanIntensity_ImageAfterMathDP
    Filter using a minimum measurement value?:Yes
    Minimum value:0.5
    Filter using a maximum measurement value?:No
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
MeasureObjectSizeShape:[module_num:51|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
    Select object sets to measure:ConvertImageToObjectsIlastik, FilterObjectsDP, FilterObjectsMK, RemovedObjectsMKprogenitors, RemovedObjectsSP, WatershedAF647
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

OverlayOutlines:[module_num:52|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:HistogramEqualizationGFP
    Name the output image:OrigOverlayGFP
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:Red
    Select objects to display:WatershedAF647
    Select outline color:Green
    Select objects to display:WatershedGFP
    Select outline color:Blue
    Select objects to display:RemovedObjectsSP
    Select outline color:Yellow
    Select objects to display:FilterObjectsDP
    Select outline color:White
    Select objects to display:ConvertImageToObjectsIlastik

ConvertObjectsToImage:[module_num:53|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
    Select the input objects:FilterObjectsKUO
    Name the output image:BinaryKuO
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:54|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
    Select the type of image to save:Image
    Select the image to save:BinaryKuO
    Select method for constructing file names:From image filename
    Select image name for file prefix:KUO
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:binary
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:55|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlayGFP
    Select method for constructing file names:From image filename
    Select image name for file prefix:GFP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:seg
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

Watershed:[module_num:56|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enabled:False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
    Select the input image:RemoveHolesAF647
    Name the output object:WatershedAF647
    Use advanced settings?:No
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:1
    Compactness:0.0
    Footprint:10
    Downsample:2
    Separate watershed labels:No
    Declump method:Shape
    Reference Image:None
    Segmentation distance transform smoothing factor:1.0
    Minimum distance between seeds:1
    Minimum absolute internal distance:0.0
    Pixels from border to exclude:0
    Maximum number of seeds:-1
    Structuring element for seed dilation:Disk,1

ConvertObjectsToImage:[module_num:57|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
    Select the input objects:FilterObjectsMK
    Name the output image:CellImageMK
    Select the color format:Binary (black & white)
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
ImageMath:[module_num:58|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMathMK
    Image or measurement?:Image
    Select the first image:CellImageMK
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
DistanceTransform:[module_num:59|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
    Select the input image:ImageAfterMathMK
    Name the output image:DistanceTransformMK
    Rescale values from 0 to 1?:No

ConvertObjectsToImage:[module_num:60|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
    Select the input objects:RemovedObjectsMKprogenitors
    Name the output image:CellImageMKprog
    Select the color format:Binary (black & white)
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
ImageMath:[module_num:61|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMathMKprog
    Image or measurement?:Image
    Select the first image:CellImageMKprog
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
DistanceTransform:[module_num:62|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
    Select the input image:ImageAfterMathMKprog
    Name the output image:DistanceTransformMKprog
    Rescale values from 0 to 1?:No

ImageMath:[module_num:63|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMathvessel
    Image or measurement?:Image
    Select the first image:RemoveHolesAF647
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
DistanceTransform:[module_num:64|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
    Select the input image:ImageAfterMathvessel
    Name the output image:DistanceTransformvessel
    Rescale values from 0 to 1?:Yes

MeasureObjectIntensity:[module_num:65|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
    Select images to measure:AF647, Autofluo, DistanceTransformMK, DistanceTransformMKprog, DistanceTransformvessel, GFP, KUO
    Select objects to measure:FilterObjectsDP, FilterObjectsMK, RemovedObjectsMKprogenitors, RemovedObjectsSP, WatershedAF647

MeasureObjectNeighbors:[module_num:66|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
    Select objects to measure:FilterObjectsDP
    Select neighboring objects to measure:FilterObjectsMK
    Method to determine neighbors:Within a specified distance
    Neighbor distance:30
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:67|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
    Select objects to measure:FilterObjectsDP
    Select neighboring objects to measure:RemovedObjectsMKprogenitors
    Method to determine neighbors:Within a specified distance
    Neighbor distance:30
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:68|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
    Select objects to measure:RemovedObjectsSP
    Select neighboring objects to measure:FilterObjectsMK
    Method to determine neighbors:Within a specified distance
    Neighbor distance:30
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:69|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
    Select objects to measure:RemovedObjectsSP
    Select neighboring objects to measure:RemovedObjectsMKprogenitors
    Method to determine neighbors:Within a specified distance
    Neighbor distance:30
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:70|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
    Select objects to measure:FilterObjectsDP
    Select neighboring objects to measure:WatershedAF647
    Method to determine neighbors:Within a specified distance
    Neighbor distance:30
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:71|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
    Select objects to measure:RemovedObjectsSP
    Select neighboring objects to measure:WatershedAF647
    Method to determine neighbors:Within a specified distance
    Neighbor distance:30
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
ExportToSpreadsheet:[module_num:72|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|Downloads/CellProfiler/TilescanKuO
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:WatershedAF647|Intensity_MaxIntensityEdge_KUO,WatershedAF647|Intensity_MaxIntensityEdge_GFP,WatershedAF647|Intensity_MaxIntensityEdge_Autofluo,WatershedAF647|Intensity_MaxIntensityEdge_AF647,WatershedAF647|Intensity_IntegratedIntensity_Autofluo,WatershedAF647|Intensity_IntegratedIntensity_GFP,WatershedAF647|Intensity_IntegratedIntensity_AF647,WatershedAF647|Intensity_IntegratedIntensity_KUO,WatershedAF647|Intensity_MeanIntensity_GFP,WatershedAF647|Intensity_MeanIntensity_AF647,WatershedAF647|Intensity_MeanIntensity_KUO,WatershedAF647|Intensity_MeanIntensity_Autofluo,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:Yes
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
SaveImages:[module_num:73|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
    Select the type of image to save:Image
    Select the image to save:ThresholdIlastik
    Select method for constructing file names:From image filename
    Select image name for file prefix:Ilastik
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder|Downloads/CellProfiler/TilescanKuO
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveCroppedObjects:[module_num:74|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enabled:False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
    Do you want to save cropped images or object masks?:Images
    Objects:FilterObjectsKUO
    Directory:Default Input Folder sub-folder|Downloads/CellProfiler/TilescanKuO
    Prefix saved crop image name with input image name?:No
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    Save output crops in nested folders?:No
    Saved file format:8-bit tiff
    Image to crop:KUO
