CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:109
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.', '', 'corrected_movies_2_1movieexampls/movies_apply_2_splitchannels + trackmate_output_split']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '^(?P<VWF>.*)_Ch(?P<Channelnb>.*)_xyzCorrected.tif']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
    Extract metadata?:Yes
    Metadata data type:Choose for each
    Metadata types:{"Channelnb": "integer", "FileLocation": "text", "Format1": "text", "Format2": "text", "Frame": "text", "Series": "text", "Timepoint": "integer", "VWF": "text"}
    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<VWF>.*)_Ch(?P<Channelnb>.*).ti(?P<Format1>.*) - T=(?P<Timepoint>.*).ti(?P<Format2>.*)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '', '0.5524285', '1.92']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
    Assign a name to:Images matching rules
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    Match metadata:[{'AF647': 'VWF', 'Autofluo': 'VWF', 'GFP': 'VWF', 'KUO': 'VWF', 'KuO_segmentation': 'VWF', 'track': 'VWF', 'Ilastik_GFP': 'VWF'}, {'AF647': 'Timepoint', 'Autofluo': 'Timepoint', 'GFP': 'Timepoint', 'KUO': 'Timepoint', 'KuO_segmentation': 'Timepoint', 'track': 'Timepoint', 'Ilastik_GFP': 'Timepoint'}]
    Image set matching method:Metadata
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    Assignments count:7
    Single images count:0
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    Process as 3D?:Yes
    Relative pixel spacing in X:0.487
    Relative pixel spacing in Y:0.487
    Relative pixel spacing in Z:3
    Select the rule criteria:and (file does contain "Ch1")
    Name to assign these images:GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Ch2")
    Name to assign these images:AF647
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Ch3") (directory doesnot contain "output") (file doesnot contain "seg")
    Name to assign these images:KUO
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Ch4")
    Name to assign these images:Autofluo
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Ch8")
    Name to assign these images:track
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Ch3") (directory does contain "output")
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    Name to assign these objects:KuO_segmentation
    Select the image type:Objects
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    Select the rule criteria:and (file does contain "Ch5")
    Name to assign these images:Ilastik_GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:VWF

GaussianFilter:[module_num:5|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
    Select the input image:KUO
    Name the output image:GaussianFilterKUO
    Sigma:3

GaussianFilter:[module_num:6|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
    Select the input image:Autofluo
    Name the output image:GaussianFilterautofluo
    Sigma:3

GaussianFilter:[module_num:7|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
    Select the input image:GFP
    Name the output image:GaussianFilterGFP
    Sigma:2

HistogramEqualization:[module_num:8|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notes:['256 bin size', '', 'The GFP signal is enhanced for the SP/DP filter']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
    Select the input image:GaussianFilterGFP
    Name the output image:HistogramEqualizationGFP
    Bins:200
    Mask:Leave blank
    Local:Yes
    Tile Size:50
    Clip limit:0.01
    Is you image 3D?:Yes
    Do framewise calculation?:Yes
    Tile Size (Z):5

ImageMath:[module_num:9|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notes:['raise power of results by 0.5', '', '1.2']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
    Operation:Subtract
    Raise the power of the result by:0.6
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMathKUOautofluo
    Image or measurement?:Image
    Select the first image:GaussianFilterKUO
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:GaussianFilterautofluo
    Multiply the second image by:1.4
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
Threshold:[module_num:10|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notes:['smoothing scale 2, correction factor 1.4 ', 'robust background sd 41, 1.3 correction', 'Otsu 3 classes, 0.8 correction', 'trying Otsu two classes 2.3']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
    Select the input image:ImageAfterMathKUOautofluo
    Name the output image:ThresholdedKUO
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1
    Threshold correction factor:1.3
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
RemoveHoles:[module_num:11|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enabled:False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
    Select the input image:ThresholdedKUO
    Name the output image:RemoveHolesKUO
    Size of holes to fill:20

Threshold:[module_num:12|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
    Select the input image:Ilastik_GFP
    Name the output image:ThresholdGFP
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.1
    Lower and upper bounds on threshold:0.00,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
ImageMath:[module_num:13|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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMathDP
    Image or measurement?:Image
    Select the first image:ThresholdedKUO
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:ThresholdGFP
    Multiply the second image by:1.0
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
RescaleIntensity:[module_num:14|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enabled:False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
    Select the input image:AF647
    Name the output image:RescaleIntensityAF647
    Rescaling method:Stretch each image to use the full intensity range
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
ImageMath:[module_num:15|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enabled:False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
    Operation:None
    Raise the power of the result by:0.8
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMathAF647
    Image or measurement?:Image
    Select the first image:RescaleIntensityAF647
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
GaussianFilter:[module_num:16|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enabled:False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
    Select the input image:ImageAfterMathAF647
    Name the output image:GaussianFilterAF647
    Sigma:2

HistogramEqualization:[module_num:17|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enabled:False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
    Select the input image:GaussianFilterAF647
    Name the output image:HistogramEqualizationAF647
    Bins:256
    Mask:Leave blank
    Local:Yes
    Tile Size:50
    Clip limit:0.01
    Is you image 3D?:Yes
    Do framewise calculation?:No
    Tile Size (Z):5

Threshold:[module_num:18|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notes:['0.027 threshold bound', '', 'foreground, 2 correction, smotting of 1', '', '0 smoothing, 1..5 correction']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enabled:False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
    Select the input image:GaussianFilterAF647
    Name the output image:ThresholdAF647
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:2
    Threshold correction factor:2
    Lower and upper bounds on threshold:0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
RemoveHoles:[module_num:19|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notes:['20', 'tried 145 too']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enabled:False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
    Select the input image:ThresholdAF647
    Name the output image:RemoveHolesAF647
    Size of holes to fill:145

ConvertImageToObjects:[module_num:20|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enabled:False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
    Select the input image:RemoveHolesAF647
    Name the output object:ConvertImageToObjectsAF647
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

MeasureObjectSizeShape:[module_num:21|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enabled:False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
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

FilterObjects:[module_num:22|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enabled:False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
    Select the objects to filter:ConvertImageToObjectsAF647
    Name the output objects:FilterObjectsAF647
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_Volume
    Filter using a minimum measurement value?:Yes
    Minimum value:2500
    Filter using a maximum measurement value?:No
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
RescaleIntensity:[module_num:23|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
    Select the input image:GFP
    Name the output image:RescaleIntensityGFP
    Rescaling method:Stretch each image to use the full intensity range
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
ImageMath:[module_num:24|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
    Operation:None
    Raise the power of the result by:0.8
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMathRIGFP
    Image or measurement?:Image
    Select the first image:RescaleIntensityGFP
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
Threshold:[module_num:25|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notes:['9 sd, 1.3 captures bright MK', '', 'on HistEqGFP: adaptive robust background, sd of 6, threshold correction factor of 1, size of adaptive window of 50', '', '0 smoothing, 1.3 correction']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
    Select the input image:Ilastik_GFP
    Name the output image:ThresholdIlastik
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1
    Threshold correction factor:1.3
    Lower and upper bounds on threshold:0.00001,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
Watershed:[module_num:26|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
    Select the input image:ThresholdIlastik
    Name the output object:Mk_segmentation
    Use advanced settings?:No
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:1
    Compactness:0.0
    Footprint:30
    Downsample:3
    Separate watershed labels:No
    Declump method:Shape
    Reference Image:None
    Segmentation distance transform smoothing factor:1.0
    Minimum distance between seeds:1
    Minimum absolute internal distance:0.0
    Pixels from border to exclude:0
    Maximum number of seeds:-1
    Structuring element for seed dilation:Disk,1

MeasureObjectSizeShape:[module_num:27|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
    Select object sets to measure:Mk_segmentation
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:28|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notes:['MK based on size', 'was 1500']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
    Select the objects to filter:Mk_segmentation
    Name the output objects:FilterObjectsMK
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_Volume
    Filter using a minimum measurement value?:Yes
    Minimum value:2500
    Filter using a maximum measurement value?:No
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
MaskImage:[module_num:29|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
    Select the input image:ImageAfterMathDP
    Name the output image:MaskedImageAfterMathDP
    Use objects or an image as a mask?:Objects
    Select object for mask:FilterObjectsMK
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    Invert the mask?:Yes

Watershed:[module_num:30|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enabled:False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
    Select the input image:RemoveHolesKUO
    Name the output object:Watershed
    Use advanced settings?:No
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:1
    Compactness:0.0
    Footprint:10
    Downsample:2
    Separate watershed labels:No
    Declump method:Shape
    Reference Image:None
    Segmentation distance transform smoothing factor:1.0
    Minimum distance between seeds:1
    Minimum absolute internal distance:0.0
    Pixels from border to exclude:0
    Maximum number of seeds:-1
    Structuring element for seed dilation:Ball,1

MeasureObjectSizeShape:[module_num:31|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enabled:False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
    Select object sets to measure:Watershed
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:32|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notes:['600', '', 'was 180']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enabled:False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
    Select the objects to filter:Watershed
    Name the output objects:FilterObjectsKUO
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_Volume
    Filter using a minimum measurement value?:Yes
    Minimum value:250
    Filter using a maximum measurement value?:No
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
Threshold:[module_num:33|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
    Select the input image:Autofluo
    Name the output image:ThresholdImageAutofluo
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:4
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
Watershed:[module_num:34|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
    Select the input image:ThresholdImageAutofluo
    Name the output object:Watershedautofluo
    Use advanced settings?:No
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:1
    Compactness:0.0
    Footprint:10
    Downsample:2
    Separate watershed labels:No
    Declump method:Shape
    Reference Image:None
    Segmentation distance transform smoothing factor:1.0
    Minimum distance between seeds:1
    Minimum absolute internal distance:0.0
    Pixels from border to exclude:0
    Maximum number of seeds:-1
    Structuring element for seed dilation:Disk,1

MeasureObjectIntensity:[module_num:35|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
    Select images to measure:ImageAfterMathDP
    Select objects to measure:KuO_segmentation

FilterObjects:[module_num:36|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notes:['upper quartile intensity should be 25% min is 1 (vs 0.5)']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
    Select the objects to filter:KuO_segmentation
    Name the output objects:FilterObjectsDP
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:Yes
    Name the objects removed by the filter:RemovedObjectsSP
    Select the measurement to filter by:Intensity_MeanIntensity_ImageAfterMathDP
    Filter using a minimum measurement value?:Yes
    Minimum value:0.05
    Filter using a maximum measurement value?:No
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
ConvertObjectsToImage:[module_num:37|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enabled:False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
    Select the input objects:ConvertImageToObjectsAF647
    Name the output image:ImageConvertImageToObjectsAF647
    Select the color format:Binary (black & white)
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
ImageMath:[module_num:38|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enabled:False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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMathAF647Invert
    Image or measurement?:Image
    Select the first image:ImageConvertImageToObjectsAF647
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
DistanceTransform:[module_num:39|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enabled:False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
    Select the input image:ImageAfterMathAF647Invert
    Name the output image:DistanceTransformAF647
    Rescale values from 0 to 1?:No

MeasureObjectIntensity:[module_num:40|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enabled:False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
    Select images to measure:DistanceTransformAF647
    Select objects to measure:FilterObjectsDP, RemovedObjectsSP

OverlayOutlines:[module_num:41|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ImageAfterMathAF647
    Name the output image:OrigOverlayAF647
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:Red
    Select objects to display:FilterObjectsAF647

SaveImages:[module_num:42|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:OrigOverlayAF647
    Select method for constructing file names:From image filename
    Select image name for file prefix:AF647
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:vessel
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

Threshold:[module_num:43|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enabled:False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
    Select the input image:Ilastik_GFP
    Name the output image:ThresholdIlastikforPLT
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
DilateObjects:[module_num:44|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
    Select the input object:FilterObjectsMK
    Name the output object:DilateObjectsMK
    Structuring element:disk,3

MaskImage:[module_num:45|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
    Select the input image:ThresholdIlastik
    Name the output image:MaskedThresholdIlastik
    Use objects or an image as a mask?:Objects
    Select object for mask:DilateObjectsMK
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    Invert the mask?:Yes

MaskImage:[module_num:46|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
    Select the input image:MaskedThresholdIlastik
    Name the output image:MaskedThresholdIlastik2
    Use objects or an image as a mask?:Objects
    Select object for mask:FilterObjectsDP
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    Invert the mask?:Yes

Watershed:[module_num:47|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
    Select the input image:MaskedThresholdIlastik2
    Name the output object:WatershedMaskedThresholdIlastik
    Use advanced settings?:No
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:1
    Compactness:0.0
    Footprint:4
    Downsample:1
    Separate watershed labels:No
    Declump method:Shape
    Reference Image:None
    Segmentation distance transform smoothing factor:1.0
    Minimum distance between seeds:1
    Minimum absolute internal distance:0.0
    Pixels from border to exclude:0
    Maximum number of seeds:-1
    Structuring element for seed dilation:Disk,1

MeasureObjectIntensity:[module_num:48|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
    Select images to measure:Autofluo, GFP, KUO, track
    Select objects to measure:FilterObjectsDP, Mk_segmentation, RemovedObjectsSP, WatershedMaskedThresholdIlastik, Watershedautofluo

MeasureObjectSizeShape:[module_num:49|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
    Select object sets to measure:WatershedMaskedThresholdIlastik
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

FilterObjects:[module_num:50|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notes:['Platelets that are small and in the vessels']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
    Select the objects to filter:WatershedMaskedThresholdIlastik
    Name the output objects:FilterObjects_plt
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_Volume
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:200
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
FilterObjects:[module_num:51|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notes:['clumps tend to be bright red, could even use a less processed version of AF647']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
    Select the objects to filter:WatershedMaskedThresholdIlastik
    Name the output objects:FilterObjects_clump
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_Volume
    Filter using a minimum measurement value?:Yes
    Minimum value:200
    Filter using a maximum measurement value?:Yes
    Maximum value:1200
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
FilterObjects:[module_num:52|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enabled:False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
    Select the objects to filter:Mk_segmentation
    Name the output objects:SmallGFP_out
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_ThresholdAF647
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.8
    Select the measurement to filter by:AreaShape_Volume
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:250
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
FilterObjects:[module_num:53|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notes:['Progenitors that are smaller than MK but bigger than platelets']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
    Select the objects to filter:Mk_segmentation
    Name the output objects:FilterObjects_progenitors
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_Volume
    Filter using a minimum measurement value?:Yes
    Minimum value:600
    Filter using a maximum measurement value?:Yes
    Maximum value:2500
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
MeasureObjectSizeShape:[module_num:54|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
    Select object sets to measure:FilterObjectsMK, FilterObjects_plt, FilterObjects_progenitors, Watershedautofluo
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

OverlayOutlines:[module_num:55|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ImageAfterMathRIGFP
    Name the output image:OrigOverlayMK
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#00F500
    Select objects to display:FilterObjectsMK
    Select outline color:#00FCD8
    Select objects to display:FilterObjects_progenitors
    Select outline color:#FF001A
    Select objects to display:FilterObjects_plt
    Select outline color:White
    Select objects to display:FilterObjectsDP
    Select outline color:#F0FF00
    Select objects to display:RemovedObjectsSP

Resize:[module_num:56|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
    Select the input image:OrigOverlayMK
    Name the output image:ResizeOverlayMK
    Resizing method:Resize by specifying desired final dimensions
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    Width (x) of the final image:500
    Height (y) of the final image:500
    # of planes (z) in the final image:10
    Interpolation method:Nearest Neighbor
    Method to specify the dimensions:Manual
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    Additional image count:0

SaveImages:[module_num:57|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
    Select the type of image to save:Image
    Select the image to save:ResizeOverlayMK
    Select method for constructing file names:From image filename
    Select image name for file prefix:GFP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:GFP
    Saved file format:tiff
    Output file location:Default Output Folder|Downloads/CellProfiler/movie_pipeline_test/15_MK_overlay
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ConvertObjectsToImage:[module_num:58|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
    Select the input objects:FilterObjects_plt
    Name the output image:ImageConvertImageToObjectsplt
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:59|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
    Select the input objects:FilterObjects_clump
    Name the output image:ImageConvertImageToObjectsclump
    Select the color format:Binary (black & white)
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
ImageMath:[module_num:60|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMathInvertplt
    Image or measurement?:Image
    Select the first image:ImageConvertImageToObjectsplt
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:61|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMathInvertclump
    Image or measurement?:Image
    Select the first image:ImageConvertImageToObjectsclump
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
DistanceTransform:[module_num:62|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
    Select the input image:ImageAfterMathInvertplt
    Name the output image:DistanceTransforplt
    Rescale values from 0 to 1?:No

DistanceTransform:[module_num:63|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
    Select the input image:ImageAfterMathInvertclump
    Name the output image:DistanceTransforclump
    Rescale values from 0 to 1?:No

ConvertObjectsToImage:[module_num:64|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
    Select the input objects:FilterObjects_progenitors
    Name the output image:ImageConvertImageToObjectsprog
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:65|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enabled:False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
    Select the input objects:FilterObjects_progenitors
    Name the output image:ImageConvertImageToObjectsprog
    Select the color format:Binary (black & white)
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
ImageMath:[module_num:66|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMathInvertprog
    Image or measurement?:Image
    Select the first image:ImageConvertImageToObjectsprog
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
DistanceTransform:[module_num:67|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
    Select the input image:ImageAfterMathInvertprog
    Name the output image:DistanceTransforprog
    Rescale values from 0 to 1?:No

ConvertObjectsToImage:[module_num:68|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
    Select the input objects:FilterObjectsMK
    Name the output image:ImageConvertImageToObjectsMK
    Select the color format:Binary (black & white)
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
ImageMath:[module_num:69|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMathInvertMK
    Image or measurement?:Image
    Select the first image:ImageConvertImageToObjectsMK
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
DistanceTransform:[module_num:70|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
    Select the input image:ImageAfterMathInvertMK
    Name the output image:DistanceTransformMK
    Rescale values from 0 to 1?:No

ConvertObjectsToImage:[module_num:71|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enabled:False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
    Select the input objects:SmallGFP_out
    Name the output image:ImageConvertImageToObjectsout
    Select the color format:Binary (black & white)
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
ImageMath:[module_num:72|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enabled:False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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMathInverout
    Image or measurement?:Image
    Select the first image:ImageConvertImageToObjectsout
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
DistanceTransform:[module_num:73|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enabled:False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
    Select the input image:ImageAfterMathInverout
    Name the output image:DistanceTransformout
    Rescale values from 0 to 1?:No

ConvertObjectsToImage:[module_num:74|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
    Select the input objects:Watershedautofluo
    Name the output image:ImageConvertImageToObjectsautofluo
    Select the color format:Binary (black & white)
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
ImageMath:[module_num:75|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMathInverautofluo
    Image or measurement?:Image
    Select the first image:ImageConvertImageToObjectsautofluo
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
DistanceTransform:[module_num:76|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
    Select the input image:ImageAfterMathInverautofluo
    Name the output image:DistanceTransformautofluo
    Rescale values from 0 to 1?:No

MeasureObjectIntensity:[module_num:77|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
    Select images to measure:AF647, Autofluo, DistanceTransforclump, DistanceTransformMK, DistanceTransformautofluo, DistanceTransforplt, DistanceTransforprog, GFP, ImageAfterMathDP, KUO, track
    Select objects to measure:FilterObjectsDP, RemovedObjectsSP, Watershedautofluo

MeasureObjectNeighbors:[module_num:78|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
    Select objects to measure:FilterObjectsDP
    Select neighboring objects to measure:FilterObjectsMK
    Method to determine neighbors:Within a specified distance
    Neighbor distance:30
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:79|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
    Select objects to measure:FilterObjectsDP
    Select neighboring objects to measure:FilterObjects_progenitors
    Method to determine neighbors:Within a specified distance
    Neighbor distance:30
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:80|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
    Select objects to measure:FilterObjectsDP
    Select neighboring objects to measure:FilterObjects_plt
    Method to determine neighbors:Within a specified distance
    Neighbor distance:30
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:81|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enabled:False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
    Select objects to measure:FilterObjectsDP
    Select neighboring objects to measure:ConvertImageToObjectsAF647
    Method to determine neighbors:Within a specified distance
    Neighbor distance:30
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:82|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
    Select objects to measure:FilterObjectsDP
    Select neighboring objects to measure:Watershedautofluo
    Method to determine neighbors:Within a specified distance
    Neighbor distance:30
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:83|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enabled:False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
    Select objects to measure:FilterObjectsDP
    Select neighboring objects to measure:SmallGFP_out
    Method to determine neighbors:Within a specified distance
    Neighbor distance:30
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:84|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
    Select objects to measure:FilterObjectsDP
    Select neighboring objects to measure:RemovedObjectsSP
    Method to determine neighbors:Within a specified distance
    Neighbor distance:200
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:85|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
    Select objects to measure:FilterObjectsDP
    Select neighboring objects to measure:FilterObjectsDP
    Method to determine neighbors:Within a specified distance
    Neighbor distance:200
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:86|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
    Select objects to measure:RemovedObjectsSP
    Select neighboring objects to measure:FilterObjects_progenitors
    Method to determine neighbors:Within a specified distance
    Neighbor distance:30
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:87|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
    Select objects to measure:RemovedObjectsSP
    Select neighboring objects to measure:FilterObjects_plt
    Method to determine neighbors:Within a specified distance
    Neighbor distance:30
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:88|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
    Select objects to measure:RemovedObjectsSP
    Select neighboring objects to measure:FilterObjectsMK
    Method to determine neighbors:Within a specified distance
    Neighbor distance:30
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:89|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enabled:False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
    Select objects to measure:RemovedObjectsSP
    Select neighboring objects to measure:ConvertImageToObjectsAF647
    Method to determine neighbors:Within a specified distance
    Neighbor distance:30
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:90|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
    Select objects to measure:RemovedObjectsSP
    Select neighboring objects to measure:Watershedautofluo
    Method to determine neighbors:Within a specified distance
    Neighbor distance:30
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:91|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enabled:False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
    Select objects to measure:RemovedObjectsSP
    Select neighboring objects to measure:SmallGFP_out
    Method to determine neighbors:Within a specified distance
    Neighbor distance:30
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:92|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
    Select objects to measure:RemovedObjectsSP
    Select neighboring objects to measure:RemovedObjectsSP
    Method to determine neighbors:Within a specified distance
    Neighbor distance:200
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:93|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
    Select objects to measure:RemovedObjectsSP
    Select neighboring objects to measure:FilterObjectsDP
    Method to determine neighbors:Within a specified distance
    Neighbor distance:200
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:94|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enabled:False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
    Select objects to measure:Watershedautofluo
    Select neighboring objects to measure:FilterObjects_progenitors
    Method to determine neighbors:Within a specified distance
    Neighbor distance:30
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:95|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enabled:False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
    Select objects to measure:Watershedautofluo
    Select neighboring objects to measure:FilterObjectsMK
    Method to determine neighbors:Within a specified distance
    Neighbor distance:30
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:96|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enabled:False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
    Select objects to measure:Watershedautofluo
    Select neighboring objects to measure:SmallGFP_out
    Method to determine neighbors:Within a specified distance
    Neighbor distance:30
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:97|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enabled:False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
    Select objects to measure:Watershedautofluo
    Select neighboring objects to measure:FilterObjects_plt
    Method to determine neighbors:Within a specified distance
    Neighbor distance:30
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:98|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enabled:False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
    Select objects to measure:Watershedautofluo
    Select neighboring objects to measure:ConvertImageToObjectsAF647
    Method to determine neighbors:Within a specified distance
    Neighbor distance:30
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:99|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enabled:False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
    Select objects to measure:Watershedautofluo
    Select neighboring objects to measure:Watershedautofluo
    Method to determine neighbors:Within a specified distance
    Neighbor distance:30
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:100|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enabled:False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
    Select objects to measure:Watershedautofluo
    Select neighboring objects to measure:FilterObjectsDP
    Method to determine neighbors:Within a specified distance
    Neighbor distance:200
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:101|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enabled:False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
    Select objects to measure:Watershedautofluo
    Select neighboring objects to measure:RemovedObjectsSP
    Method to determine neighbors:Within a specified distance
    Neighbor distance:200
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:102|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
    Select objects to measure:FilterObjects_clump
    Select neighboring objects to measure:RemovedObjectsSP
    Method to determine neighbors:Within a specified distance
    Neighbor distance:200
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:103|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
    Select objects to measure:FilterObjects_clump
    Select neighboring objects to measure:FilterObjectsDP
    Method to determine neighbors:Within a specified distance
    Neighbor distance:200
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:104|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
    Select objects to measure:FilterObjects_clump
    Select neighboring objects to measure:Watershedautofluo
    Method to determine neighbors:Within a specified distance
    Neighbor distance:200
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
ConvertObjectsToImage:[module_num:105|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enabled:False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
    Select the input objects:FilterObjectsDP
    Name the output image:CellImageDP
    Select the color format:Grayscale
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
ConvertObjectsToImage:[module_num:106|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enabled:False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
    Select the input objects:RemovedObjectsSP
    Name the output image:CellImageSP
    Select the color format:Grayscale
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
SaveCroppedObjects:[module_num:107|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enabled:False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
    Do you want to save cropped images or object masks?:No
    Objects:No
    Directory:No
    Prefix saved crop image name with input image name?:No
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    Save output crops in nested folders?:No
    Saved file format:Images
    Image to crop:None

SaveCroppedObjects:[module_num:108|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enabled:False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
    Do you want to save cropped images or object masks?:No
    Objects:No
    Directory:No
    Prefix saved crop image name with input image name?:No
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    Save output crops in nested folders?:No
    Saved file format:Images
    Image to crop:None

ExportToSpreadsheet:[module_num:109|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:FilterObjectsDP|Location_MaxIntensity_X_KUO,FilterObjectsDP|Location_MaxIntensity_X_DistanceTransformMK,FilterObjectsDP|Location_MaxIntensity_X_AF647,FilterObjectsDP|Location_MaxIntensity_X_DistanceTransforclump,FilterObjectsDP|Location_MaxIntensity_X_track,FilterObjectsDP|Location_MaxIntensity_X_Autofluo,FilterObjectsDP|Location_MaxIntensity_X_DistanceTransformautofluo,FilterObjectsDP|Location_MaxIntensity_X_GFP,FilterObjectsDP|Location_MaxIntensity_X_DistanceTransforprog,FilterObjectsDP|Location_MaxIntensity_X_DistanceTransforplt,FilterObjectsDP|Location_MaxIntensity_Z_DistanceTransforprog,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:Yes
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