CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:8
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does istif)

Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '', 'For some reason you have to extract the Metadataa from image file headers first and then add add another extraction method!!!!!!']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<VWF>.*)_Ch(?P<Channelnb>.*).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:5
    Single images count:0
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    Process as 3D?:Yes
    Relative pixel spacing in X:0.4143
    Relative pixel spacing in Y:0.4143
    Relative pixel spacing in Z:3
    Select the rule criteria:and (metadata does Channelnb "1")
    Name to assign these images:cKiteF450
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channelnb "2")
    Name to assign these images:VwfGFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channelnb "3")
    Name to assign these images:CD150AF647
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (metadata does Channelnb "4")
    Name to assign these images:KUO
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channelnb "5")
    Name to assign these images:Autofluorescence
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:VWF

SaveImages:[module_num:5|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
    Select the type of image to save:Movie/Stack
    Select the image to save:VwfGFP
    Select method for constructing file names:From image filename
    Select image name for file prefix:VwfGFP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:VwfGFP
    Saved file format:tiff
    Output file location:Elsewhere...|/Volumes/LUIS1_MS/Experiments/Split_channels_tilescans
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    How to save the series:Z (Slice)
    Save with lossless compression?:Yes

SaveImages:[module_num:6|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
    Select the type of image to save:Movie/Stack
    Select the image to save:CD150AF647
    Select method for constructing file names:From image filename
    Select image name for file prefix:CD150AF647
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:AF647
    Saved file format:tiff
    Output file location:Elsewhere...|/Volumes/LUIS1_MS/Experiments/Split_channels_tilescans
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    How to save the series:Z (Slice)
    Save with lossless compression?:Yes

SaveImages:[module_num:7|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
    Select the type of image to save:Movie/Stack
    Select the image to save:KUO
    Select method for constructing file names:From image filename
    Select image name for file prefix:KUO
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:KUO
    Saved file format:tiff
    Output file location:Elsewhere...|/Volumes/LUIS1_MS/Experiments/Split_channels_tilescans
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    How to save the series:Z (Slice)
    Save with lossless compression?:Yes

SaveImages:[module_num:8|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
    Select the type of image to save:Movie/Stack
    Select the image to save:Autofluorescence
    Select method for constructing file names:From image filename
    Select image name for file prefix:Autofluorescence
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:Autofluo
    Saved file format:tiff
    Output file location:Elsewhere...|/Volumes/LUIS1_MS/Experiments/Split_channels_tilescans
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    How to save the series:Z (Slice)
    Save with lossless compression?:Yes
