CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:500
GitHash:
ModuleCount:11
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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    Extract image planes:Yes
    Split channels:No
    Split z-planes:No
    Split timepoints:No

Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:DNA
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    Set intensity range from:Image metadata
    Assignments count:4
    Single images count:0
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    Process as 3D?:Yes
    Relative pixel spacing in X:1.0
    Relative pixel spacing in Y:1.0
    Relative pixel spacing in Z:1.0
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
GaussianFilter:[module_num:5|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
    Select the input image:DNA
    Name the output image:GaussianFilter
    Sigma:1

Threshold:[module_num:6|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
    Select the input image:GaussianFilter
    Name the output image:Threshold
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:5
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
Watershed:[module_num:7|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
    Select the input image:Threshold
    Name the output object:Watershed
    Use advanced settings?:No
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:1
    Compactness:0.0
    Footprint:8
    Downsample:1
    Separate watershed labels:No
    Declump method:Shape
    Reference Image:None
    Segmentation distance transform smoothing factor:1.0
    Minimum distance between seeds:1
    Minimum absolute internal distance:0.0
    Pixels from border to exclude:0
    Maximum number of seeds:-1
    Structuring element for seed dilation:Disk,1

MeasureObjectSizeShape:[module_num:8|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
    Select object sets to measure:Watershed
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

FilterObjects:[module_num:9|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
    Select the objects to filter:Watershed
    Name the output objects:FilterObjects
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_Volume
    Filter using a minimum measurement value?:Yes
    Minimum value:500
    Filter using a maximum measurement value?:No
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
SaveCroppedObjects:[module_num:10|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
    Do you want to save cropped images or object masks?:Images
    Objects:FilterObjects
    Directory:Default Output Folder
    Prefix saved crop image name with input image name?:Yes
    Select image name to use as a prefix:DNA
    Save output crops in nested folders?:No
    Saved file format:8-bit tiff
    Image to crop:GaussianFilter

SaveImages:[module_num:11|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:Threshold
    Select method for constructing file names:From image filename
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
