CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:18
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.', '', 'corrected_movies_2_1movieexampls/movies_apply_2_splitchannels + trackmate_output_split']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '^(?P<VWF>.*)_Ch(?P<Channelnb>.*)_xyzCorrected.tif']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
    Extract metadata?:Yes
    Metadata data type:Choose for each
    Metadata types:{"Channelnb": "integer", "FileLocation": "text", "Format1": "text", "Format2": "text", "Frame": "text", "Series": "text", "Timepoint": "integer", "VWF": "text"}
    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<KUO>.*)_Ch(?P<Channelnb>.*)_xyzCorrected.ti(?P<Format1>.*) - T=(?P<Timepoint>.*).ti(?P<Format2>.*)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '', '0.5524285', '1.92']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
    Assign a name to:Images matching rules
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    Match metadata:[{'AF647': 'KUO', 'Autofluo': 'KUO', 'GFP': 'KUO', 'KUO': 'KUO'}, {'AF647': 'Timepoint', 'Autofluo': 'Timepoint', 'GFP': 'Timepoint', 'KUO': 'Timepoint'}]
    Image set matching method:Metadata
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    Assignments count:4
    Single images count:0
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    Process as 3D?:Yes
    Relative pixel spacing in X:0.487
    Relative pixel spacing in Y:0.487
    Relative pixel spacing in Z:3
    Select the rule criteria:and (file does contain "Ch1")
    Name to assign these images:GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Ch2")
    Name to assign these images:AF647
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Ch3") (directory doesnot contain "output")
    Name to assign these images:KUO
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Ch4")
    Name to assign these images:Autofluo
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:KUO

GaussianFilter:[module_num:5|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
    Select the input image:KUO
    Name the output image:GaussianFilterKUO
    Sigma:3

GaussianFilter:[module_num:6|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
    Select the input image:Autofluo
    Name the output image:GaussianFilterautofluo
    Sigma:3

GaussianFilter:[module_num:7|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
    Select the input image:GFP
    Name the output image:GaussianFilterGFP
    Sigma:2

ImageMath:[module_num:8|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notes:['raise power of results by 0.5', '', '1.2']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
    Operation:Subtract
    Raise the power of the result by:1
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMathKUOautofluo
    Image or measurement?:Image
    Select the first image:GaussianFilterKUO
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:GaussianFilterautofluo
    Multiply the second image by:1.3
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
Threshold:[module_num:9|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notes:['smoothing scale 2, correction factor 1.4 ', 'robust background sd 41, 1.3 correction', 'Otsu 3 classes, 0.8 correction', 'trying Otsu two classes 2.3']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
    Select the input image:ImageAfterMathKUOautofluo
    Name the output image:ThresholdedKUO
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1
    Threshold correction factor:1.3
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
Watershed:[module_num:10|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
    Select the input image:ThresholdedKUO
    Name the output object:KuO_segmentation
    Use advanced settings?:No
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:1
    Compactness:0.0
    Footprint:10
    Downsample:2
    Separate watershed labels:No
    Declump method:Shape
    Reference Image:None
    Segmentation distance transform smoothing factor:1.0
    Minimum distance between seeds:1
    Minimum absolute internal distance:0.0
    Pixels from border to exclude:0
    Maximum number of seeds:-1
    Structuring element for seed dilation:Ball,1

MeasureObjectIntensity:[module_num:11|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
    Select images to measure:GFP
    Select objects to measure:KuO_segmentation

MeasureObjectSizeShape:[module_num:12|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
    Select object sets to measure:KuO_segmentation
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:13|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
    Select the objects to filter:KuO_segmentation
    Name the output objects:FilterObjects
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Keep removed objects as a seperate set?:Yes
    Name the objects removed by the filter:RemovedObjects
    Select the measurement to filter by:Intensity_UpperQuartileIntensity_GFP
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:1000
    Select the measurement to filter by:AreaShape_Volume
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:2500

Threshold:[module_num:14|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
    Select the input image:Autofluo
    Name the output image:ThresholdImageAutofluo
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:4
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
Watershed:[module_num:15|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
    Select the input image:ThresholdImageAutofluo
    Name the output object:Watershedautofluo
    Use advanced settings?:No
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:1
    Compactness:0.0
    Footprint:10
    Downsample:2
    Separate watershed labels:No
    Declump method:Shape
    Reference Image:None
    Segmentation distance transform smoothing factor:1.0
    Minimum distance between seeds:1
    Minimum absolute internal distance:0.0
    Pixels from border to exclude:0
    Maximum number of seeds:-1
    Structuring element for seed dilation:Disk,1

OverlayOutlines:[module_num:16|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:GFP
    Name the output image:OrigOverlayGFP
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#00F500
    Select objects to display:KuO_segmentation

Resize:[module_num:17|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
    Select the input image:OrigOverlayGFP
    Name the output image:ResizeOverlayMK
    Resizing method:Resize by specifying desired final dimensions
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    Width of the final image:500
    Height of the final image:500
    Interpolation method:Nearest Neighbor
    Method to specify the dimensions:Manual
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    Additional image count:0

SaveImages:[module_num:18|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
    Select the type of image to save:Image
    Select the image to save:ResizeOverlayMK
    Select method for constructing file names:From image filename
    Select image name for file prefix:GFP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:GFP
    Saved file format:tiff
    Output file location:Default Output Folder|Downloads/CellProfiler/movie_pipeline_test/15_MK_overlay
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
